<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:q4="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:q1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Experiment name</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="XP name" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test2cams</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\Data\test\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>DirFileName</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT2S</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Video1FileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirFileName</Name>
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Name>avi filename</q1:Name>
              <q1:Description>avi filename</q1:Description>
              <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCam1.avi"
  return path
</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q1:PythonTransform">
        <q1:Name>ffmpeg call</q1:Name>
        <q1:Script>import os

pipename = r'\\.\pipe\video1'

@returns(bool)
def process(value):
  fname=value.Item2;
  os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 640x480 -pix_fmt rgb24 -i {0} -c:v h264_nvenc -preset fast -b:v 4M {1}',pipename,fname))
  # -r 500 -preset fast  -b:v 2M
  # os.system(str.format(r'ffmpeg -f rawvideo -pix_fmt rgb24 -s 640x480 -i {0} -y -pix_fmt nv12 -vcodec h264_nvenc {1}',pipename,fname))
  return True</q1:Script>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Video2FileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirFileName</Name>
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Name>avi filename</q1:Name>
              <q1:Description>avi filename</q1:Description>
              <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCam2.avi"
  return path
</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q1:PythonTransform">
        <q1:Name>ffmpeg call</q1:Name>
        <q1:Script>import os

pipename = r'\\.\pipe\video2'

@returns(bool)
def process(value):
  fname=value.Item2;
  os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 640x480 -pix_fmt rgb24 -i {0} -c:v h264_nvenc -preset fast -b:v 4M {1}',pipename,fname))
  # -r 500 -preset fast  -b:v 2M
  # os.system(str.format(r'ffmpeg -f rawvideo -pix_fmt rgb24 -s 640x480 -i {0} -y -pix_fmt nv12 -vcodec h264_nvenc {1}',pipename,fname))
  return True</q1:Script>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:PylonCapture">
          <q2:SerialNumber>22789615</q2:SerialNumber>
          <q2:ParameterFile>C:\Basler\Config\acA640-750um_triggered500Hz_318rig.pfs</q2:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SkipUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:ImageWriter">
          <q3:Path>\\.\pipe\video1</q3:Path>
          <q3:Suffix>None</q3:Suffix>
          <q3:Overwrite>false</q3:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:PylonCapture">
          <q2:SerialNumber>22636055</q2:SerialNumber>
          <q2:ParameterFile>C:\Basler\Config\acA640-750um_triggered500Hz_318rig.pfs</q2:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SkipUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:ImageWriter">
          <q3:Path>\\.\pipe\video2</q3:Path>
          <q3:Suffix>None</q3:Suffix>
          <q3:Overwrite>false</q3:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:KeyDown">
          <q4:Filter>Pause</q4:Filter>
          <q4:SuppressRepetitions>false</q4:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:KeyDown">
          <q4:Filter>End</q4:Filter>
          <q4:SuppressRepetitions>false</q4:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>VideoStart</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>true</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q5:DigitalOutput">
            <q5:PortName>COM11</q5:PortName>
            <q5:Pin>6</q5:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Delay">
            <DueTime>PT0.01S</DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>false</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q5:DigitalOutput">
            <q5:PortName>COM11</q5:PortName>
            <q5:Pin>6</q5:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>VideoStart</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>true</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q5:DigitalOutput">
            <q5:PortName>COM11</q5:PortName>
            <q5:Pin>8</q5:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>VideoEnd</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>false</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q5:DigitalOutput">
            <q5:PortName>COM11</q5:PortName>
            <q5:Pin>8</q5:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>VideoEnd</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>true</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q5:DigitalOutput">
            <q5:PortName>COM11</q5:PortName>
            <q5:Pin>6</q5:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Delay">
            <DueTime>PT0.01S</DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>false</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q5:DigitalOutput">
            <q5:PortName>COM11</q5:PortName>
            <q5:Pin>6</q5:Pin>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="14" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="21" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Arduino.DigitalOutput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Pylon.PylonCapture, Bonsai.Pylon, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SkipUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>