<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089" xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>End</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>End signal</Name>
        <Description>End signal</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
                <Value>End</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="6" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source3" />
            <Edge From="5" To="6" Label="Source4" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM9</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM9</io:PortName>
          <io:NewLine />
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%i,%i,%i,%i,</Pattern>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Left blue</Name>
        <Description>Left condition</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Right orange</Name>
        <Description>Right Condition</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Histoconvet</Name>
        <Description>conversion to histogram</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>1</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Tile">
                <dsp:RowTiles>1</dsp:RowTiles>
                <dsp:ColumnTiles>10</dsp:ColumnTiles>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Mat

@returns(Mat)
def process(value):
  return value.Reshape(0, 1)</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Tile">
                <dsp:RowTiles>2</dsp:RowTiles>
                <dsp:ColumnTiles>1</dsp:ColumnTiles>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>FilterMatrix</Name>
              <Description>FilterMatrix</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ipy:PythonSource">
                    <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Mat
from System import Array

@returns(Mat)
def generate():
  array = Array.CreateInstance(int, 2, 20)
  for i in range(10):
    array[0, i] = 1
    array[1, i+10] = 1
  yield Mat.FromArray(array)</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>RandomStart</Name>
        <Description>RandomStart</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
                <Value>S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>from System import Random
generator = Random()

@returns(float)
def process(value):
  return generator.NextDouble()</ipy:Script>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="8" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source3" />
            <Edge From="7" To="8" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM9</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source2" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="2" To="16" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>