<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>Arduino parameters</Name>
        <Text><![CDATA[Select the COM port for the ARDUINO.
Set the sampling frequency (default interval: 10ms).]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>DigitalTrigger</ard:Name>
          <ard:PortName>COM5</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>10</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Digital input parameter</Name>
        <Text><![CDATA[Set which pin receives the TTL]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>DigitalTrigger</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>check digital pin</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Trigger</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Trigger</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Virtual Key Press</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference('System.Windows.Forms')
from System.Windows.Forms import SendKeys

def process(value):
    if value:
        # Send Ctl 3
        # SendKeys.SendWait("^3")
        # Send Ctl Shift 8 
        SendKeys.SendWait("^+8")
    return value</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>