<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>RandomStart</Name>
        <Description>RandomStart</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
                <Value>S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>from System import Random
generator = Random()

@returns(float)
def process(value):
  return generator.NextDouble()</ipy:Script>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="8" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source3" />
            <Edge From="7" To="8" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM9</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>End</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>End signal</Name>
        <Description>End signal</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
                <Value>End</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="6" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source3" />
            <Edge From="5" To="6" Label="Source4" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM9</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM9</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source2" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="2" To="6" Label="Source2" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>