<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\tmp\light_bottom_2019-03-19-161548-0000.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>22</cv:X>
            <cv:Y>24</cv:Y>
            <cv:Width>439</cv:Width>
            <cv:Height>428</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:AdaptiveThreshold">
          <cv:MaxValue>255</cv:MaxValue>
          <cv:AdaptiveMethod>MeanC</cv:AdaptiveMethod>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
          <cv:BlockSize>107</cv:BlockSize>
          <cv:Parameter>33</cv:Parameter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it &gt; 155 &amp;&amp; it &lt; 280</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>5</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>5</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>SpeedComputation</ipy:Name>
        <ipy:Script>import math
@returns(float)
def process(value):
  speed = math.sqrt(((value[0][0][0]-value[0][1][0])**2)+((value[1][0][0]-value[1][1][0])**2))
  return float(speed)</ipy:Script>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>MyPort</osc:Connection>
        <osc:Address>/localhost.11236</osc:Address>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it &gt; 115 &amp;&amp; it &lt; 270</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Orientation</Selector>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>MyPort</osc:Connection>
        <osc:Address>/localhost.11236</osc:Address>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="26" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="16" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="10" To="12" Label="Source2" />
      <Edge From="10" To="17" Label="Source2" />
      <Edge From="10" To="18" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="22" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="25" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="21" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>