<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\HP\Documents\GitHub\Bonsai\BonVideo\My_vid.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/localhost.11236</osc:Address>
        <osc:Connection>MATLAB</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\HP\Documents\GitHub\Bonsai\BonCSV\My_Data.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>