<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:p1="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Rhd2000EvalBoard">
          <p1:BitFileName>C:\Code\OpenEphysGUI\Resources\Bitfiles\rhd2000.bit</p1:BitFileName>
          <p1:SampleRate>SampleRate30000Hz</p1:SampleRate>
          <p1:FastSettle>false</p1:FastSettle>
          <p1:LowerBandwidth>0.1</p1:LowerBandwidth>
          <p1:UpperBandwidth>7500</p1:UpperBandwidth>
          <p1:DspCutoffFrequency>1</p1:DspCutoffFrequency>
          <p1:DspEnabled>true</p1:DspEnabled>
          <p1:CableDelayA xsi:nil="true" />
          <p1:CableDelayB xsi:nil="true" />
          <p1:CableDelayC xsi:nil="true" />
          <p1:CableDelayD xsi:nil="true" />
          <p1:ExternalFastSettleEnabled>false</p1:ExternalFastSettleEnabled>
          <p1:ExternalFastSettleChannel>0</p1:ExternalFastSettleChannel>
          <p1:LedDisplayEnabled>false</p1:LedDisplayEnabled>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BufferCapacity</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>16</dsp:int>
            <dsp:int>0</dsp:int>
            <dsp:int>31</dsp:int>
            <dsp:int>15</dsp:int>
            <dsp:int>18</dsp:int>
            <dsp:int>2</dsp:int>
            <dsp:int>29</dsp:int>
            <dsp:int>13</dsp:int>
            <dsp:int>24</dsp:int>
            <dsp:int>8</dsp:int>
            <dsp:int>25</dsp:int>
            <dsp:int>3</dsp:int>
            <dsp:int>23</dsp:int>
            <dsp:int>7</dsp:int>
            <dsp:int>17</dsp:int>
            <dsp:int>12</dsp:int>
            <dsp:int>22</dsp:int>
            <dsp:int>9</dsp:int>
            <dsp:int>30</dsp:int>
            <dsp:int>4</dsp:int>
            <dsp:int>26</dsp:int>
            <dsp:int>6</dsp:int>
            <dsp:int>27</dsp:int>
            <dsp:int>11</dsp:int>
            <dsp:int>21</dsp:int>
            <dsp:int>1</dsp:int>
            <dsp:int>28</dsp:int>
            <dsp:int>5</dsp:int>
            <dsp:int>20</dsp:int>
            <dsp:int>10</dsp:int>
            <dsp:int>19</dsp:int>
            <dsp:int>14</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="PathEphys" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\Bonsai_Ephys\Ephysdata</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:AdcScale">
          <p1:AdcType>Electrode</p1:AdcType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ReferenceChannels" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Cutoff1>300</dsp:Cutoff1>
          <dsp:Cutoff2>6000</dsp:Cutoff2>
          <dsp:KernelLength>60</dsp:KernelLength>
          <dsp:FilterType>BandPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Raster</Name>
        <Description>Raster</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:DetectSpikes">
                <dsp:Delay>13</dsp:Delay>
                <dsp:Length>30</dsp:Length>
                <dsp:Threshold>
                  <dsp:double>-16.981449508778862</dsp:double>
                  <dsp:double>-16.837236427685614</dsp:double>
                  <dsp:double>-20.225272280027873</dsp:double>
                  <dsp:double>-18.307142761073276</dsp:double>
                  <dsp:double>-21.227316451451717</dsp:double>
                  <dsp:double>-20.376988983756249</dsp:double>
                  <dsp:double>-21.652996228579823</dsp:double>
                  <dsp:double>-21.296037147588255</dsp:double>
                  <dsp:double>-21.175367745631089</dsp:double>
                  <dsp:double>-21.068920960573482</dsp:double>
                  <dsp:double>-20.6134168269696</dsp:double>
                  <dsp:double>-22.915142611175757</dsp:double>
                  <dsp:double>-21.214333954228323</dsp:double>
                  <dsp:double>-20.580198976381396</dsp:double>
                  <dsp:double>-22.366207289785983</dsp:double>
                  <dsp:double>-21.685742210877009</dsp:double>
                  <dsp:double>-21.809345824466714</dsp:double>
                  <dsp:double>-21.416631507528113</dsp:double>
                  <dsp:double>-22.735191840521306</dsp:double>
                  <dsp:double>-22.553598143227614</dsp:double>
                  <dsp:double>-22.346351542218624</dsp:double>
                  <dsp:double>-20.743178354604314</dsp:double>
                  <dsp:double>-22.765203885379041</dsp:double>
                  <dsp:double>-22.893509527860527</dsp:double>
                  <dsp:double>-22.05090283112062</dsp:double>
                  <dsp:double>-21.644603953062244</dsp:double>
                  <dsp:double>-21.967276761066195</dsp:double>
                  <dsp:double>-22.176923172600972</dsp:double>
                  <dsp:double>-21.498575300285982</dsp:double>
                  <dsp:double>-20.340311102196694</dsp:double>
                  <dsp:double>-21.378533692939243</dsp:double>
                  <dsp:double>-21.376539065984186</dsp:double>
                </dsp:Threshold>
                <dsp:WaveformRefinement>AlignPeaks</dsp:WaveformRefinement>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>2</rx:Count>
                <rx:Skip>1</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference("OpenCV.Net")

from OpenCV.Net import Mat, Depth, Scalar

ioffset = None

def load():
  global ioffset
  ioffset = 0

@returns(Mat)
def process(input):
  global ioffset
  present = input[0]
  future = input[1]
  bufsize = present.BufferSize.Width
  output = Mat(present.BufferSize,Depth.F32,1)
  output.SetZero()

  for spike in present:
    spkindex = spike.SampleIndex-ioffset
    if spkindex &lt; 0:
      continue # spike was processed in the past
    output.SetReal(spike.ChannelIndex,spkindex, 1)

  for spike in future:
    spkindex = spike.SampleIndex-ioffset-bufsize
    if spkindex &lt; 0:
      spkindex += bufsize
      output.SetReal(spike.ChannelIndex,spkindex, 1)

  ioffset += bufsize
  return output</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TtlIn</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="PathTTL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\Bonsai_Ephys\TTLdata</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>BitwiseAnd</Name>
        <Description>input: image or mat</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Threshold">
          <dsp:ThresholdValue>0</dsp:ThresholdValue>
          <dsp:MaxValue>1</dsp:MaxValue>
          <dsp:ThresholdType>Binary</dsp:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>BitwiseAnd</Name>
        <Description>input: image or mat</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Threshold">
          <dsp:ThresholdValue>1</dsp:ThresholdValue>
          <dsp:MaxValue>1</dsp:MaxValue>
          <dsp:ThresholdType>Binary</dsp:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>WindowOfInterest</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source3</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Delay">
                <dsp:Count>15000</dsp:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:TriggeredBuffer">
                <dsp:Count>105000</dsp:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>TtlPresent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:SelectChannels">
                <dsp:Channels>
                  <dsp:int>32</dsp:int>
                </dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:CountNonZero" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Psth</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference("OpenCV.Net")

from OpenCV.Net import Mat, Depth, Scalar,CV

@returns(Mat)
def process(input):
  output = Mat(input.Value.Size,Depth.F32,1)
  CV.ConvertScale(input.Value,output,1.0/(input.Index+1))
  return output</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>1001</cv:Size1>
          <cv:Size2>1</cv:Size2>
          <cv:Sigma1>300</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>1050</cv:Width>
            <cv:Height>33</cv:Height>
          </cv:Size>
          <cv:Interpolation>NearestNeighbor</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertToMat" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>WindowOfInterest</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source3</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Delay">
                <dsp:Count>15000</dsp:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:TriggeredBuffer">
                <dsp:Count>105000</dsp:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>TtlPresent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:SelectChannels">
                <dsp:Channels>
                  <dsp:int>32</dsp:int>
                </dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:CountNonZero" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Psth</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference("OpenCV.Net")

from OpenCV.Net import Mat, Depth, Scalar,CV

@returns(Mat)
def process(input):
  output = Mat(input.Value.Size,Depth.F32,1)
  CV.ConvertScale(input.Value,output,1.0/(input.Index+1))
  return output</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>1050</cv:Width>
            <cv:Height>33</cv:Height>
          </cv:Size>
          <cv:Interpolation>NearestNeighbor</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertToMat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Cutoff1>10</dsp:Cutoff1>
          <dsp:Cutoff2>6000</dsp:Cutoff2>
          <dsp:KernelLength>60</dsp:KernelLength>
          <dsp:FilterType>LowPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Onlaser</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:SelectChannels">
                <dsp:Channels>
                  <dsp:int>32</dsp:int>
                </dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:CountNonZero" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Psth</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference("OpenCV.Net")

from OpenCV.Net import Mat, Depth, Scalar,CV

@returns(Mat)
def process(input):
  output = Mat(input.Value.Size,Depth.F32,1)
  CV.ConvertScale(input.Value,output,1.0/(input.Index+1))
  return output</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>1001</cv:Size1>
          <cv:Size2>1</cv:Size2>
          <cv:Sigma1>300</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>1050</cv:Width>
            <cv:Height>33</cv:Height>
          </cv:Size>
          <cv:Interpolation>NearestNeighbor</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertToMat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth xsi:nil="true" />
          <dsp:Scale>1000</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>11</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:DeviceName>Generic Software on Speakers (Realtek High Definition Audio)</al:DeviceName>
          <al:SampleRate>44100</al:SampleRate>
          <al:State>Playing</al:State>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Onlaser</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:SelectChannels">
                <dsp:Channels>
                  <dsp:int>32</dsp:int>
                </dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:CountNonZero" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Psth</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference("OpenCV.Net")

from OpenCV.Net import Mat, Depth, Scalar,CV

@returns(Mat)
def process(input):
  output = Mat(input.Value.Size,Depth.F32,1)
  CV.ConvertScale(input.Value,output,1.0/(input.Index+1))
  return output</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>1050</cv:Width>
            <cv:Height>33</cv:Height>
          </cv:Size>
          <cv:Interpolation>NearestNeighbor</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertToMat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Cutoff1>10</dsp:Cutoff1>
          <dsp:Cutoff2>6000</dsp:Cutoff2>
          <dsp:KernelLength>60</dsp:KernelLength>
          <dsp:FilterType>LowPass</dsp:FilterType>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="10" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="24" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="35" Label="Source1" />
      <Edge From="9" To="18" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source2" />
      <Edge From="14" To="24" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source3" />
      <Edge From="17" To="24" Label="Source3" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="30" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="38" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>