<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:p1="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SampleRate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Rhd2000EvalBoard">
          <p1:BitFileName>C:\Shared Data\RHD2000interface_source_code_v1_41\main.bit</p1:BitFileName>
          <p1:SampleRate>SampleRate1000Hz</p1:SampleRate>
          <p1:FastSettle>false</p1:FastSettle>
          <p1:LowerBandwidth>0.1</p1:LowerBandwidth>
          <p1:UpperBandwidth>7500</p1:UpperBandwidth>
          <p1:DspCutoffFrequency>1</p1:DspCutoffFrequency>
          <p1:DspEnabled>false</p1:DspEnabled>
          <p1:CableDelayA xsi:nil="true" />
          <p1:CableDelayB xsi:nil="true" />
          <p1:CableDelayC xsi:nil="true" />
          <p1:CableDelayD xsi:nil="true" />
          <p1:ExternalFastSettleEnabled>false</p1:ExternalFastSettleEnabled>
          <p1:ExternalFastSettleChannel>0</p1:ExternalFastSettleChannel>
          <p1:LedDisplayEnabled>false</p1:LedDisplayEnabled>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BoardAdcData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Submatrix">
          <dsp:StartRow>0</dsp:StartRow>
          <dsp:EndRow>1</dsp:EndRow>
          <dsp:StartCol>0</dsp:StartCol>
          <dsp:EndCol>60</dsp:EndCol>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Cutoff1>8</dsp:Cutoff1>
          <dsp:Cutoff2>15</dsp:Cutoff2>
          <dsp:KernelLength>1000</dsp:KernelLength>
          <dsp:FilterType>BandPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Split" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>3</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM1</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import clr

def getOutputType():
  return clr.GetClrType(bool)

def process(input):
  if input == True:
    return False
  </ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM1</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT30S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>