<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:p1="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Rhd2000EvalBoard">
          <p1:BitFileName>C:\OpenEphys\open-ephys-windows\rhd2000.bit</p1:BitFileName>
          <p1:SampleRate>SampleRate30000Hz</p1:SampleRate>
          <p1:FastSettle>false</p1:FastSettle>
          <p1:LowerBandwidth>0.1</p1:LowerBandwidth>
          <p1:UpperBandwidth>7500</p1:UpperBandwidth>
          <p1:DspCutoffFrequency>1</p1:DspCutoffFrequency>
          <p1:DspEnabled>true</p1:DspEnabled>
          <p1:CableDelayA xsi:nil="true" />
          <p1:CableDelayB xsi:nil="true" />
          <p1:CableDelayC xsi:nil="true" />
          <p1:CableDelayD xsi:nil="true" />
          <p1:ExternalFastSettleEnabled>false</p1:ExternalFastSettleEnabled>
          <p1:ExternalFastSettleChannel>0</p1:ExternalFastSettleChannel>
          <p1:LedDisplayEnabled>false</p1:LedDisplayEnabled>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\test\amplifier.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BoardAdcData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\test\adc.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TtlIn</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\test\sync.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>