<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>MultiChannelWriter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Rows</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CreateChannelSelectors</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>10</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Channel</Name>
              <rx:BufferSize>1</rx:BufferSize>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>WriteChannelFiles</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>from System import Array, Int32

@returns(Array[Int32])
def process(value):
  return Array[Int32]([value])</ipy:Script>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Channels" Selector="Item1" />
                    </PropertyMappings>
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:SelectChannels">
                      <dsp:Channels>
                        <dsp:int>9</dsp:int>
                      </dsp:Channels>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Channel</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>@returns(str)
def process(value):
  return str.format("channels\channel_{0}.bin",value)</ipy:Script>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>channels\channel_9.bin</dsp:Path>
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Data</Name>
              <rx:BufferSize>10</rx:BufferSize>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>