<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>4</vid:Index>
          <vid:Format>
            <vid:FrameSize>
              <vid:Width>640</vid:Width>
              <vid:Height>480</vid:Height>
            </vid:FrameSize>
            <vid:AverageFrameRate>29</vid:AverageFrameRate>
            <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
            <vid:BitCount>16</vid:BitCount>
          </vid:Format>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.1S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferCount">
          <rx:Count>32</rx:Count>
          <rx:Skip>1</rx:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FramesToSum</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name />
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Exposure</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>-2147483648</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Up/down: control exposure</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Down</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Up</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Accumulation</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>from System import Single
@returns(Single)
def process(value):
  return 1 if value&lt;=1 else value</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>FramesToSum</Name>
        <rx:BufferSize>1</rx:BufferSize>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>