<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Data\Video\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>whatabout</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>_HSCam.avi</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(input):
#    Directory= value.Item1
#    FileName= value.Item2
#    FileNameSuf= value.Item3
    return input.Item1+input.Item2+input.Item3</ipy:Script>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties>
            <cv:CapturePropertyAssignment>
              <cv:Property>Fps</cv:Property>
              <cv:Value>500</cv:Value>
            </cv:CapturePropertyAssignment>
          </cv:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Data\Video\whatabout_HSCam.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>500</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Data\Video\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>whatabout</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>_HSCam.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(input):
#    Directory= value.Item1
#    FileName= value.Item2
#    FileNameSuf= value.Item3
    return input.Item1+input.Item2+input.Item3</ipy:Script>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Data\Video\whatabout_HSCam.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="12" Label="Source1" />
      <Edge From="2" To="4" Label="Source2" />
      <Edge From="3" To="4" Label="Source3" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="10" To="18" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="14" Label="Source2" />
      <Edge From="13" To="14" Label="Source3" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>