<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.2.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q4="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q6="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns:q1="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="q1:CsvWriter">
        <q1:FileName>C:\Data\Behav\testclock_.csv</q1:FileName>
        <q1:Append>false</q1:Append>
        <q1:Overwrite>false</q1:Overwrite>
        <q1:Suffix>Timestamp</q1:Suffix>
        <q1:IncludeHeader>false</q1:IncludeHeader>
        <q1:Selector>Source.Value,Source.Timestamp.DateTime</q1:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Start</Name>
        <Description>Start</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>it ? 1 : 0</q2:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowPropertyOfKeys">
                <Value>S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>0</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>0</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:KeyDown">
          <q3:Filter>S</q3:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>SocialTrial</Name>
        <Description>SocialTrial</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>it ? 1 : 0</q2:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowPropertyOfKeys">
                <Value>I</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>0</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>0</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SerialStringWrite">
          <q1:PortName>COM8</q1:PortName>
          <q1:NewLine>\r\n</q1:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SerialStringWrite">
          <q1:PortName>COM8</q1:PortName>
          <q1:NewLine>\r\n</q1:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SerialStringRead">
          <q1:PortName>COM8</q1:PortName>
          <q1:NewLine>\r\n</q1:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SerialStringWrite">
          <q1:PortName>COM8</q1:PortName>
          <q1:NewLine>\r\n</q1:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SerialStringWrite">
          <q1:PortName>COM8</q1:PortName>
          <q1:NewLine>\r\n</q1:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:KeyDown">
          <q3:Filter>End</q3:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>PostSocialTrial</Name>
        <Description>PostSocialTrial</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>it ? 1 : 0</q2:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowPropertyOfKeys">
                <Value>R</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>0</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>0</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringSerialStringWrite">
        <MemberName>PortName</MemberName>
        <Name>SerialWrite3</Name>
        <Value />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>End signal</Name>
        <Description>End signal</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>it ? 1 : 0</q2:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowPropertyOfKeys">
                <Value>End</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>0</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>0</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:KeyDown">
          <q3:Filter>I</q3:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringSerialStringWrite">
        <MemberName>PortName</MemberName>
        <Name>SerialWrite4</Name>
        <Value />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:KeyDown">
          <q3:Filter>P</q3:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Stop_Pause</Name>
        <Description>Stop</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>it ? 1 : 0</q2:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowPropertyOfKeys">
                <Value>P</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>0</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>0</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Trial number, Trial type, Succes count, Time</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringSerialStringWrite">
        <MemberName>PortName</MemberName>
        <Name>SerialWrite2</Name>
        <Value />
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringSerialStringRead">
        <MemberName>PortName</MemberName>
        <Name>SerialRead</Name>
        <Value />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>COM8</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Merge" />
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringSerialStringWrite">
        <MemberName>PortName</MemberName>
        <Name>SerialWrite1</Name>
        <Value />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SerialStringWrite">
          <q1:PortName>COM8</q1:PortName>
          <q1:NewLine>\r\n</q1:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringSerialStringWrite">
        <MemberName>PortName</MemberName>
        <Name>SerialWrite5</Name>
        <Value />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:KeyDown">
          <q3:Filter>R</q3:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TriggeredWindow">
          <Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:RoiActivityDetected">
          <q4:Index xsi:nil="true" />
          <q4:Threshold>0</q4:Threshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:RoiActivityDetected">
          <q4:Index xsi:nil="true" />
          <q4:Threshold>0</q4:Threshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:Concat">
          <q5:Axis>0</q5:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:VideoWriter">
          <q4:FileName>C:\Data\Video\Testclock_Webcam.avi</q4:FileName>
          <q4:Suffix>Timestamp</q4:Suffix>
          <q4:Buffered>true</q4:Buffered>
          <q4:Overwrite>false</q4:Overwrite>
          <q4:FourCC>FMP4</q4:FourCC>
          <q4:FrameRate>30</q4:FrameRate>
          <q4:FrameSize>
            <q4:Width>0</q4:Width>
            <q4:Height>0</q4:Height>
          </q4:FrameSize>
          <q4:ResizeInterpolation>NearestNeighbor</q4:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:VideoWriter">
          <q4:FileName>C:\Data\Video\Testclock_HSCam.avi</q4:FileName>
          <q4:Suffix>Timestamp</q4:Suffix>
          <q4:Buffered>true</q4:Buffered>
          <q4:Overwrite>false</q4:Overwrite>
          <q4:FourCC>FMP4</q4:FourCC>
          <q4:FrameRate>500</q4:FrameRate>
          <q4:FrameSize>
            <q4:Width>0</q4:Width>
            <q4:Height>0</q4:Height>
          </q4:FrameSize>
          <q4:ResizeInterpolation>NearestNeighbor</q4:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="q1:CsvWriter">
        <q1:FileName>C:\Data\Video\Testclock_HSCam.csv</q1:FileName>
        <q1:Append>false</q1:Append>
        <q1:Overwrite>false</q1:Overwrite>
        <q1:Suffix>Timestamp</q1:Suffix>
        <q1:IncludeHeader>false</q1:IncludeHeader>
        <q1:Selector>Source.Timestamp</q1:Selector>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>NoseDetector</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Area</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:FindContours">
                <q4:Mode>External</q4:Mode>
                <q4:Method>ChainApproxNone</q4:Method>
                <q4:Offset>
                  <q4:X>0</q4:X>
                  <q4:Y>0</q4:Y>
                </q4:Offset>
                <q4:MinArea>50</q4:MinArea>
                <q4:MaxArea>500</q4:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:HsvThreshold">
                <q4:Lower>
                  <q4:Val0>99</q4:Val0>
                  <q4:Val1>95</q4:Val1>
                  <q4:Val2>44</q4:Val2>
                  <q4:Val3>0</q4:Val3>
                </q4:Lower>
                <q4:Upper>
                  <q4:Val0>165</q4:Val0>
                  <q4:Val1>255</q4:Val1>
                  <q4:Val2>129</q4:Val2>
                  <q4:Val3>255</q4:Val3>
                </q4:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:ConvertColor">
                <q4:Conversion>Bgr2Hsv</q4:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DistinctUntilChanged" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:RoiActivity" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:RoiActivity" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q2:PythonTransform">
        <q2:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

font = Font(2)

@returns(IplImage)
def process(value):
  data = value.Item1
  start = value.Item2
  elapsed = data.Timestamp - start
  output = data.Value.Clone()
  CV.PutText(output, elapsed.ToString("hh\:mm\:ss\.fff"), Point(0,30), font, Scalar.Rgb(255,255,0))
  return output</q2:Script>
      </Expression>
      <Expression xsi:type="q2:PythonTransform">
        <q2:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

font = Font(2)

@returns(IplImage)
def process(value):
  data = value.Item1
  start = value.Item2
  elapsed = data.Timestamp - start
  output = data.Value.Clone()
  CV.PutText(output, elapsed.ToString("hh\:mm\:ss\.fff"), Point(0,30), font, Scalar.Rgb(255,0,255))
  return output</q2:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:Crop">
          <q4:RegionOfInterest>
            <q4:X>142</q4:X>
            <q4:Y>264</q4:Y>
            <q4:Width>100</q4:Width>
            <q4:Height>150</q4:Height>
          </q4:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:Laplace">
          <q4:ApertureSize>3</q4:ApertureSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:Laplace">
          <q4:ApertureSize>3</q4:ApertureSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:Crop">
          <q4:RegionOfInterest>
            <q4:X>16</q4:X>
            <q4:Y>240</q4:Y>
            <q4:Width>100</q4:Width>
            <q4:Height>150</q4:Height>
          </q4:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:Crop">
          <q4:RegionOfInterest>
            <q4:X>252</q4:X>
            <q4:Y>224</q4:Y>
            <q4:Width>100</q4:Width>
            <q4:Height>150</q4:Height>
          </q4:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Skip">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Skip">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:Flip">
          <q4:Mode>Horizontal</q4:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:Flip">
          <q4:Mode>Vertical</q4:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:VideoCaptureDevice">
          <q6:Index>1</q6:Index>
          <q6:Format>
            <q6:FrameSize>
              <q6:Width>640</q6:Width>
              <q6:Height>480</q6:Height>
            </q6:FrameSize>
            <q6:AverageFrameRate>30</q6:AverageFrameRate>
            <q6:MaximumFrameRate>60</q6:MaximumFrameRate>
            <q6:BitCount>24</q6:BitCount>
          </q6:Format>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:CameraCapture">
          <q4:Index>1</q4:Index>
          <q4:CaptureProperties>
            <q4:CapturePropertyAssignment>
              <q4:Property>Fps</q4:Property>
              <q4:Value>500</q4:Value>
            </q4:CapturePropertyAssignment>
          </q4:CaptureProperties>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>22</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>6</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>5</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>9</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>24</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>34</From>
        <To>27</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>35</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>36</From>
        <To>29</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>37</From>
        <To>30</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>38</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>39</From>
        <To>32</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>40</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>40</From>
        <To>34</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>40</From>
        <To>37</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>41</From>
        <To>35</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>42</From>
        <To>36</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>43</From>
        <To>38</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>44</From>
        <To>39</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>45</From>
        <To>41</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>45</From>
        <To>37</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>46</From>
        <To>42</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>46</From>
        <To>37</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>47</From>
        <To>43</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>48</From>
        <To>43</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>49</From>
        <To>44</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>50</From>
        <To>44</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>51</From>
        <To>40</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>51</From>
        <To>45</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>51</From>
        <To>46</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>52</From>
        <To>48</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>53</From>
        <To>50</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>54</From>
        <To>51</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>55</From>
        <To>47</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>55</From>
        <To>52</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>56</From>
        <To>49</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>56</From>
        <To>53</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>56</From>
        <To>33</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>57</From>
        <To>54</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>57</From>
        <To>55</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>58</From>
        <To>56</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.WorkflowProperty`1[[System.Windows.Forms.Keys, System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.SerialStringWrite, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.SerialStringRead, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.SerialStringWrite, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.SerialStringRead, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Merge, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TriggeredWindow, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivityDetected, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Concat, Bonsai.Dsp, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.HsvThreshold, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertColor, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivity, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Laplace, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Flip, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Video.VideoCaptureDevice, Bonsai.Video, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>