<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Tracking</Name>
        <Description>Tracks objects in the image</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThresholdValue" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>128</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MinArea" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea xsi:nil="true" />
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Period" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SaveDataFiles</Name>
        <Description>Saves individual clips aligned on timer ticks</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>data.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>