<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:p1="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Rhd2000EvalBoard">
          <p1:BitFileName>C:\OpenEphys\open-ephys-windows\rhd2000.bit</p1:BitFileName>
          <p1:SampleRate>SampleRate30000Hz</p1:SampleRate>
          <p1:FastSettle>false</p1:FastSettle>
          <p1:LowerBandwidth>0.1</p1:LowerBandwidth>
          <p1:UpperBandwidth>7500</p1:UpperBandwidth>
          <p1:DspCutoffFrequency>1</p1:DspCutoffFrequency>
          <p1:DspEnabled>true</p1:DspEnabled>
          <p1:CableDelayA xsi:nil="true" />
          <p1:CableDelayB xsi:nil="true" />
          <p1:CableDelayC xsi:nil="true" />
          <p1:CableDelayD xsi:nil="true" />
          <p1:ExternalFastSettleEnabled>false</p1:ExternalFastSettleEnabled>
          <p1:ExternalFastSettleChannel>0</p1:ExternalFastSettleChannel>
          <p1:LedDisplayEnabled>false</p1:LedDisplayEnabled>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BoardAdcData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:AdcScale">
          <p1:AdcType>BoardAdc</p1:AdcType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Cutoff1>300</dsp:Cutoff1>
          <dsp:Cutoff2>6000</dsp:Cutoff2>
          <dsp:KernelLength>60</dsp:KernelLength>
          <dsp:FilterType>BandPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTrigger">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>0</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="5" To="8" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>