<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.2.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CameraCapture">
          <q1:Index>1</q1:Index>
          <q1:CaptureProperties>
            <q1:CapturePropertyAssignment>
              <q1:Property>Fps</q1:Property>
              <q1:Value>500</q1:Value>
            </q1:CapturePropertyAssignment>
          </q1:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q2:CsvWriter">
        <q2:FileName>C:\Data\Video\filename_HSCam.csv</q2:FileName>
        <q2:Append>false</q2:Append>
        <q2:Overwrite>false</q2:Overwrite>
        <q2:Suffix>Timestamp</q2:Suffix>
        <q2:IncludeHeader>false</q2:IncludeHeader>
        <q2:Selector>Source.Timestamp</q2:Selector>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>BurnTimestampHSCam</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Skip">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

font = Font(2)

@returns(IplImage)
def process(value):
  data = value.Item1
  start = value.Item2
  elapsed = data.Timestamp - start
  output = data.Value.Clone()
  CV.PutText(output, elapsed.ToString("hh\:mm\:ss\.fff"), Point(0,30), font, Scalar.Rgb(255,0,255))
  return output</q3:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoWriter">
          <q1:FileName>C:\Data\Video\filename_HSCam.avi</q1:FileName>
          <q1:Suffix>Timestamp</q1:Suffix>
          <q1:Buffered>true</q1:Buffered>
          <q1:Overwrite>false</q1:Overwrite>
          <q1:FourCC>FMP4</q1:FourCC>
          <q1:FrameRate>500</q1:FrameRate>
          <q1:FrameSize>
            <q1:Width>0</q1:Width>
            <q1:Height>0</q1:Height>
          </q1:FrameSize>
          <q1:ResizeInterpolation>NearestNeighbor</q1:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Interval.Ticks</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Int64Property">
          <Value>10000000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Divide" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ElementCountWindow">
          <Count>500</Count>
          <Skip>1</Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Interval.Milliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ElementCountWindow">
          <Count>500</Count>
          <Skip>1</Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Average" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>589</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfInt32IntProperty">
        <MemberName>Value</MemberName>
        <Name>Value</Name>
        <Value>0</Value>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Average" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TimeInterval, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.Int64Property, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DivideBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.ElementCountWindow, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Average, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Int32, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>