<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:p1="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:p2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Rhd2000EvalBoard">
          <p1:BitFileName>C:\OpenEphys\open-ephys-windows\rhd2000.bit</p1:BitFileName>
          <p1:SampleRate>SampleRate20000Hz</p1:SampleRate>
          <p1:FastSettle>false</p1:FastSettle>
          <p1:LowerBandwidth>0.1</p1:LowerBandwidth>
          <p1:UpperBandwidth>7500</p1:UpperBandwidth>
          <p1:DspCutoffFrequency>1</p1:DspCutoffFrequency>
          <p1:DspEnabled>true</p1:DspEnabled>
          <p1:CableDelayA xsi:nil="true" />
          <p1:CableDelayB xsi:nil="true" />
          <p1:CableDelayC xsi:nil="true" />
          <p1:CableDelayD xsi:nil="true" />
          <p1:ExternalFastSettleEnabled>false</p1:ExternalFastSettleEnabled>
          <p1:ExternalFastSettleChannel>0</p1:ExternalFastSettleChannel>
          <p1:LedDisplayEnabled>false</p1:LedDisplayEnabled>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
            <dsp:int>1</dsp:int>
            <dsp:int>2</dsp:int>
            <dsp:int>3</dsp:int>
            <dsp:int>4</dsp:int>
            <dsp:int>5</dsp:int>
            <dsp:int>6</dsp:int>
            <dsp:int>7</dsp:int>
            <dsp:int>8</dsp:int>
            <dsp:int>9</dsp:int>
            <dsp:int>10</dsp:int>
            <dsp:int>11</dsp:int>
            <dsp:int>12</dsp:int>
            <dsp:int>13</dsp:int>
            <dsp:int>14</dsp:int>
            <dsp:int>15</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>-32768</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ReferenceChannels">
          <dsp:Channels>
            <dsp:int>10</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>S16</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
            <dsp:int>1</dsp:int>
            <dsp:int>2</dsp:int>
            <dsp:int>3</dsp:int>
            <dsp:int>4</dsp:int>
            <dsp:int>5</dsp:int>
            <dsp:int>6</dsp:int>
            <dsp:int>7</dsp:int>
            <dsp:int>8</dsp:int>
            <dsp:int>9</dsp:int>
            <dsp:int>10</dsp:int>
            <dsp:int>11</dsp:int>
            <dsp:int>12</dsp:int>
            <dsp:int>13</dsp:int>
            <dsp:int>14</dsp:int>
            <dsp:int>15</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\raw\Bonsai\_16ch_.bin</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Cutoff1>300</dsp:Cutoff1>
          <dsp:Cutoff2>5000</dsp:Cutoff2>
          <dsp:KernelLength>120</dsp:KernelLength>
          <dsp:FilterType>BandPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ReferenceChannels">
          <dsp:Channels>
            <dsp:int>10</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
            <dsp:int>8</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:DetectSpikes">
          <dsp:Delay>16</dsp:Delay>
          <dsp:Length>48</dsp:Length>
          <dsp:Threshold>
            <dsp:double>-42.578102018003179</dsp:double>
            <dsp:double>-22.136259339883509</dsp:double>
          </dsp:Threshold>
          <dsp:WaveformRefinement>AlignPeaks</dsp:WaveformRefinement>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TtlIn</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\raw\Bonsai\_TTL_.bin</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BufferCapacity</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:FlyCapture">
          <p2:Index>0</p2:Index>
          <p2:ColorProcessing>Default</p2:ColorProcessing>
          <p2:ToggleTrigger>false</p2:ToggleTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.Milliseconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.Milliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="12" Label="Source1" />
      <Edge From="0" To="14" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="26" Label="Source1" />
      <Edge From="18" To="26" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="23" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="26" Label="Source3" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source4" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="31" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>