<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
          <p1:ToggleTrigger>false</p1:ToggleTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.Milliseconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.Milliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="11" Label="Source1" />
      <Edge From="3" To="11" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="11" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source4" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>