<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="gui:LabelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Text>Enter Experiment ID</gui:Text>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Text" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="gui:TextBoxBuilder">
        <gui:Name />
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Text>LO-03-0327</gui:Text>
        <gui:Multiline>false</gui:Multiline>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>LastText</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Name />
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Text>Start Experiment</gui:Text>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OnClick</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>3</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OnClick</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LastText</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1 + it.Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>LO-03-0327.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vid:VideoCaptureDevice">
                <vid:Index>0</vid:Index>
                <vid:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LastText</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1 + it.Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>LO-03-0327.avi</cv:FileName>
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="14" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="10" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="10" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>