<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="q1:CsvWriter">
        <q1:FileName>C:\Data\Video\039v_WheelRunning_HSCam.csv</q1:FileName>
        <q1:Append>false</q1:Append>
        <q1:Overwrite>false</q1:Overwrite>
        <q1:Suffix>Timestamp</q1:Suffix>
        <q1:IncludeHeader>false</q1:IncludeHeader>
        <q1:Selector>Source.Timestamp</q1:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileName</MemberName>
        <Name />
        <Value />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:CameraCapture">
          <q2:Index>0</q2:Index>
          <q2:CaptureProperties>
            <q2:CapturePropertyAssignment>
              <q2:Property>Fps</q2:Property>
              <q2:Value>500</q2:Value>
            </q2:CapturePropertyAssignment>
          </q2:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>C:\Data\Video\039v_WheelRunning_HSCam.avi</q2:FileName>
          <q2:Suffix>Timestamp</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>false</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>500</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>HSCamCSV_fname</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_HSCam.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Data\Video\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(input):
#    Directory= value.Item1
#    FileName= value.Item2
#    FileNameSuf= value.Item3
    return input.Item1+input.Item2+input.Item3</q3:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringStringProperty">
        <MemberName>Value</MemberName>
        <Name>XPName</Name>
        <Value>test</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>039v_WheelRunning</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>039v_WheelRunning</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>HSCamAVI_fname</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_HSCam.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Data\Video\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(input):
#    Directory= value.Item1
#    FileName= value.Item2
#    FileNameSuf= value.Item3
    return input.Item1+input.Item2+input.Item3</q3:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringVideoWriter">
        <MemberName>FileName</MemberName>
        <Name />
        <Value />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>0</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>