<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q4="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q6="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:q1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Experiment name</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="XP name" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\Data\test\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>DirFileName</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT2S</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VideoFileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirFileName</Name>
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Name>avi filename</q1:Name>
              <q1:Description>avi filename</q1:Description>
              <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCam.avi"
  return path
</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q1:PythonTransform">
        <q1:Name>ffmpeg call</q1:Name>
        <q1:Script>import os

#fname = 'D:\\Data\\Video\\video.avi'
pipename = r'\\.\pipe\video'

@returns(bool)
def process(value):
  fname=value.Item2;
  #os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 640x480 -pix_fmt rgb24 -i {0} -c:v h264_nvenc -preset fast -b:v 4M {1}',pipename,fname))
  # -r 500 -preset fast  -b:v 2M
  os.system(str.format(r'ffmpeg -y -f rawvideo -pix_fmt gray -s 640x480 -i {0} -y -pix_fmt nv12 -vcodec h264_nvenc {1}',pipename,fname))
  return True</q1:Script>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VideoCSVFileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirFileName</Name>
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Name>csv filename</q1:Name>
              <q1:Description>csv filename</q1:Description>
              <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCamFrameTime.csv"
  return path
</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q2:DigitalInput">
            <q2:PortName>COM11</q2:PortName>
            <q2:Pin>6</q2:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT0.01S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:PylonCapture">
          <q3:SerialNumber>22789615</q3:SerialNumber>
          <q3:ParameterFile>C:\Basler\Config\acA640-750um_triggered500Hz_318rig.pfs</q3:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SkipUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:ImageWriter">
          <q4:Path>\\.\pipe\video</q4:Path>
          <q4:Suffix>None</q4:Suffix>
          <q4:Overwrite>false</q4:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="MemberSelector">
        <Selector>GrabResult.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q1:ExpressionTransform">
        <q1:Expression>new(
Item1 as RelativeSoftwareFrameTime,
Item2 as AbsoluteSoftwareFrameTime,
Item3 as RelativeCameraFrameTime
)</q1:Expression>
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>D:\Data\test\test_20190823-164904_HSCamFrameTime.csv</q5:FileName>
        <q5:Delimiter>,</q5:Delimiter>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>false</q5:Overwrite>
        <q5:Suffix>None</q5:Suffix>
        <q5:IncludeHeader>false</q5:IncludeHeader>
        <q5:Selector>RelativeSoftwareFrameTime,AbsoluteSoftwareFrameTime,RelativeCameraFrameTime</q5:Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q2:DigitalInput">
            <q2:PortName>COM11</q2:PortName>
            <q2:Pin>4</q2:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>CamSyncCSVFileName</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>DirFileName</Name>
              </Expression>
              <Expression xsi:type="q1:PythonTransform">
                <q1:Name>csv filename</q1:Name>
                <q1:Description>csv filename</q1:Description>
                <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCamSyncOutTime.csv"
  return path
</q1:Script>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q2:DigitalInput">
            <q2:PortName>COM11</q2:PortName>
            <q2:Pin>2</q2:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="q1:ExpressionTransform">
          <q1:Expression>new(
Item1.Item1 as CamSyncOut ,
Item1.Item2 as CamSyncOutTime,
Item2.Item1 as StartRecState,
Item2.Item2 as StartRecTime,
Item3 as StartKeyPress
)</q1:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="q5:CsvWriter">
          <q5:FileName>D:\Data\test\test_20190822-122902_HSCamSyncOutTime.csv</q5:FileName>
          <q5:Delimiter>,</q5:Delimiter>
          <q5:Append>false</q5:Append>
          <q5:Overwrite>true</q5:Overwrite>
          <q5:Suffix>None</q5:Suffix>
          <q5:IncludeHeader>true</q5:IncludeHeader>
          <q5:Selector>CamSyncOut,CamSyncOutTime,StartRecState,StartRecTime,StartKeyPress</q5:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q5:SerialStringRead">
            <q5:PortName>COM8</q5:PortName>
            <q5:NewLine>,</q5:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>WheelDistanceCSVFileName</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>DirFileName</Name>
              </Expression>
              <Expression xsi:type="q1:PythonTransform">
                <q1:Name>csv filename</q1:Name>
                <q1:Description>csv filename</q1:Description>
                <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "WheelDistance.csv"
  return path
</q1:Script>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>VideoStart</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="SkipUntil" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>VideoEnd</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="TakeUntil" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Parse">
          <Pattern>%d</Pattern>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Take">
            <Count>1</Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Subtract" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="q1:ExpressionTransform">
          <q1:Expression>new(
Item1 as distance,
Item2 as ms
)</q1:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="q5:CsvWriter">
          <q5:FileName>D:\Data\vIRt41\vIRt41_0815\vIRt41_0815_4900_10Hz_10ms_20mW_20190815-165153_WheelDistance.csv</q5:FileName>
          <q5:Delimiter>,</q5:Delimiter>
          <q5:Append>false</q5:Append>
          <q5:Overwrite>true</q5:Overwrite>
          <q5:Suffix>None</q5:Suffix>
          <q5:IncludeHeader>true</q5:IncludeHeader>
          <q5:Selector>distance,ms</q5:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>8</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>8</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT0.01S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:KeyDown">
          <q6:Filter>Pause</q6:Filter>
          <q6:SuppressRepetitions>false</q6:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:KeyDown">
          <q6:Filter>End</q6:Filter>
          <q6:SuppressRepetitions>false</q6:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoEnd</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="36" Label="Source2" />
      <Edge From="8" To="28" Label="Source2" />
      <Edge From="9" To="23" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="16" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="28" Label="Source3" />
      <Edge From="18" To="47" Label="Source3" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="30" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="27" To="34" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="34" Label="Source1" />
      <Edge From="30" To="32" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source3" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="40" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="47" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="49" Label="Source2" />
      <Edge From="43" To="46" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source2" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="50" To="54" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="65" Label="Source2" />
      <Edge From="53" To="54" Label="Source2" />
      <Edge From="54" To="56" Label="Source1" />
      <Edge From="55" To="56" Label="Source2" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="59" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source2" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="63" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source2" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Arduino.DigitalInput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.DigitalOutput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ParseBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.SerialStringRead, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Pylon.PylonCapture, Bonsai.Pylon, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SkipUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>