<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q4="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q6="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:q1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Experiment name</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="XP name" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>vIRt40_0807_test</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\Data\vIRt40\vIRt40_0807\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>DirFileName</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT2S</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VideoFileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirFileName</Name>
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Name>avi filename</q1:Name>
              <q1:Description>avi filename</q1:Description>
              <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCam.avi"
  return path
</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q1:PythonTransform">
        <q1:Name>ffmpeg call</q1:Name>
        <q1:Script>import os

#fname = 'D:\\Data\\Video\\video.avi'
pipename = r'\\.\pipe\video'

@returns(bool)
def process(value):
  fname=value.Item2;
  os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 640x480 -r 500 -pix_fmt rgb24 -i {0} -c:v h264_nvenc -preset fast -b:v 8M {1}',pipename,fname))
  # -r 500
  #os.system(str.format(r'ffmpeg -f rawvideo -pix_fmt rgb24 -s 640x480 -i {0} -y -pix_fmt nv12 -vcodec h264_nvenc {1}',pipename,fname))
  return True</q1:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoCaptureDevice">
          <q2:Index>0</q2:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CSVFileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirFileName</Name>
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Name>csv filename</q1:Name>
              <q1:Description>csv filename</q1:Description>
              <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCam.csv"
  return path
</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q3:DigitalInput">
            <q3:PortName>COM11</q3:PortName>
            <q3:Pin>6</q3:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SkipUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:ImageWriter">
          <q4:Path>\\.\pipe\video</q4:Path>
          <q4:Suffix>None</q4:Suffix>
          <q4:Overwrite>false</q4:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:DigitalOutput">
          <q3:PortName>COM11</q3:PortName>
          <q3:Pin>6</q3:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT0.01S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:DigitalOutput">
          <q3:PortName>COM11</q3:PortName>
          <q3:Pin>6</q3:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="q1:ExpressionTransform">
        <q1:Expression>new(
Item1 as milli,
Item2 as sync
)</q1:Expression>
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>D:\Data\vIRt40\vIRt40_0807\vIRt40_0807_test_20190807-151326_HSCam.csv</q5:FileName>
        <q5:Delimiter>,</q5:Delimiter>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>false</q5:Overwrite>
        <q5:Suffix>None</q5:Suffix>
        <q5:IncludeHeader>false</q5:IncludeHeader>
        <q5:Selector>milli.TimeOfDay.TotalMilliseconds,sync.Timestamp.TimeOfDay.TotalMilliseconds</q5:Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="DistinctUntilChanged" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Skip">
            <Count>1</Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Subtract" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GreaterThan">
          <Operand xsi:type="TimeSpanProperty">
            <Value>-PT1M</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Condition">
          <Name>new timestamp</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>true</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q3:DigitalOutput">
            <q3:PortName>COM11</q3:PortName>
            <q3:Pin>6</q3:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BitwiseNot" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q3:DigitalOutput">
            <q3:PortName>COM11</q3:PortName>
            <q3:Pin>6</q3:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:SerialStringRead">
          <q5:PortName>COM8</q5:PortName>
          <q5:NewLine>,</q5:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CSVFileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirFileName</Name>
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Name>csv filename</q1:Name>
              <q1:Description>csv filename</q1:Description>
              <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "WheelDistance.csv"
  return path
</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SkipUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%d</Pattern>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>D:\Data\vIRt40\vIRt40_0807\vIRt40_0807_test_20190807-151326_WheelDistance.csv</q5:FileName>
        <q5:Delimiter>,</q5:Delimiter>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>true</q5:Overwrite>
        <q5:Suffix>None</q5:Suffix>
        <q5:IncludeHeader>true</q5:IncludeHeader>
        <q5:Selector>Value,Timestamp.TimeOfDay.TotalMilliseconds</q5:Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:DigitalOutput">
          <q3:PortName>COM11</q3:PortName>
          <q3:Pin>8</q3:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:DigitalOutput">
          <q3:PortName>COM11</q3:PortName>
          <q3:Pin>8</q3:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:DigitalOutput">
          <q3:PortName>COM11</q3:PortName>
          <q3:Pin>6</q3:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT0.01S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:DigitalOutput">
          <q3:PortName>COM11</q3:PortName>
          <q3:Pin>6</q3:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:KeyDown">
          <q6:Filter>Pause</q6:Filter>
          <q6:SuppressRepetitions>false</q6:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:KeyDown">
          <q6:Filter>End</q6:Filter>
          <q6:SuppressRepetitions>false</q6:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoEnd</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="11" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="26" Label="Source2" />
      <Edge From="9" To="24" Label="Source2" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="24" Label="Source1" />
      <Edge From="16" To="27" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="23" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source3" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="27" To="29" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="41" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="49" Label="Source2" />
      <Edge From="40" To="41" Label="Source2" />
      <Edge From="41" To="43" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="46" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Arduino.DigitalInput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.DigitalOutput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BitwiseNotBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ParseBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.TimeSpanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.SerialStringRead, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SkipUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Video.VideoCaptureDevice, Bonsai.Video, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>