<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:KeyDown">
          <q1:Filter>Pause</q1:Filter>
          <q1:SuppressRepetitions>false</q1:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:KeyDown">
          <q1:Filter>End</q1:Filter>
          <q1:SuppressRepetitions>false</q1:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT0.01S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT0.01S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>6</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>8</q2:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DigitalOutput">
          <q2:PortName>COM11</q2:PortName>
          <q2:Pin>8</q2:Pin>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Arduino.DigitalOutput, Bonsai.Arduino, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>