<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:GetFiles">
          <io:Path>.\</io:Path>
          <io:SearchPattern>*.avi</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>FileNames</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>ProcessVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os
import clr
clr.AddReference("Bonsai.System")
from System.IO import Path
from Bonsai.IO import PathHelper, PathSuffix

def process(value):
  path = Path.GetFileNameWithoutExtension(value) + "_LumAvgTone.avi"
  os.system(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 1920x1080 -pix_fmt bgr24 -r 60 -i \\.\pipe\video -ar 44100 -ac 1 -f s16le -i \\.\pipe\audio -vb 20M -vcodec mpeg4 {0}'.format(path))
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>FileName</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName>.\CA_L7-H2013-01_2014-09-11_TS01_catch_60fps.avi</cv:FileName>
                <cv:PlaybackRate>0</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ImageWriter">
                <cv:Path>\\.\pipe\video</cv:Path>
                <cv:Suffix>None</cv:Suffix>
                <cv:Overwrite>false</cv:Overwrite>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>726</cv:X>
                  <cv:Y>468</cv:Y>
                  <cv:Width>426</cv:Width>
                  <cv:Height>144</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Frequency" Selector="Val0" />
              </PropertyMappings>
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>735</dsp:BufferLength>
                <dsp:Frequency>0</dsp:Frequency>
                <dsp:Waveform>Sine</dsp:Waveform>
                <dsp:SampleRate>44100</dsp:SampleRate>
                <dsp:Amplitude>1</dsp:Amplitude>
                <dsp:Offset>0</dsp:Offset>
                <dsp:Phase>0</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>S16</dsp:Depth>
                <dsp:Scale>5000</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioPlayback">
                <al:SampleRate>44100</al:SampleRate>
                <al:State>Playing</al:State>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>\\.\pipe\audio</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT30S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os
import clr
clr.AddReference("Bonsai.System")
from System.IO import Path
from Bonsai.IO import PathHelper, PathSuffix
import csv

AvgLumFreqs = None
writer = None

def process(value):
  global AvgLumFreqs, writer
  if AvgLumFreqs is None:
    path = Path.GetFileNameWithoutExtension(value.Item2) + "_AvgLumFreqs.csv"
    AvgLumFreqs = open(path, 'wb')
    writer = csv.writer(AvgLumFreqs)
  writer.writerow([value.Item1])

def unload():
  global AvgLumFreqs, writer
  if AvgLumFreqs is not None:
    AvgLumFreqs.close()
    AvgLumFreqs = None
    writer = None
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>