<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>COM7</ard:PortName>
          <ard:Pin>2</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>COM7</ard:PortName>
          <ard:Pin>3</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="rx:DistinctUntilChangedBy">
        <rx:KeySelector>Item1</rx:KeySelector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="BitwiseAnd" />
      <Expression xsi:type="BitwiseAnd" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseOr" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:DistinctUntilChangedBy">
        <rx:KeySelector>Item2</rx:KeySelector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="BitwiseAnd" />
      <Expression xsi:type="BitwiseAnd" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseOr" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>-1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\Data\test\rotary encoder.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>it</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="14" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="3" To="10" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="25" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="14" To="21" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>