<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.2.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q4="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q6="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns:q1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>RandomStart</Name>
        <Description>RandomStart</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="q1:ExpressionTransform">
              <q1:Expression>it ? 1 : 0</q1:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Script>from System import Random
generator = Random()

@returns(float)
def process(value):
  return generator.NextDouble()</q1:Script>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowPropertyOfKeys">
                <Value>S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>0</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>0</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:KeyDown">
          <q2:Filter>S</q2:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:KeyDown">
          <q2:Filter>End</q2:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:SerialStringWrite">
          <q3:PortName>COM4</q3:PortName>
          <q3:NewLine>\r\n</q3:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>End signal</Name>
        <Description>End signal</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&lt;0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="q1:ExpressionTransform">
              <q1:Expression>it ? 1 : 0</q1:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>&gt;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowPropertyOfKeys">
                <Value>End</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>0</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>0</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringSerialStringWrite">
        <MemberName>PortName</MemberName>
        <Name>PortName</Name>
        <Value>COM4</Value>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringStringProperty">
        <MemberName>Value</MemberName>
        <Name>XPName</Name>
        <Value>fileName</Value>
      </Expression>
      <Expression xsi:type="Accumulate" />
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>C:\Data\Behav\ghasdfgh_.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>Timestamp</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.Value,Source.Timestamp.DateTime</q3:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item3</Selector>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Histoconvet</Name>
        <Description>conversion to histogram</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="NestedWorkflow">
              <Name>FilterMatrix</Name>
              <Description>FilterMatrix</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="q1:PythonSource">
                    <q1:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Mat
from System import Array

@returns(Mat)
def generate():
  array = Array.CreateInstance(int, 2, 20)
  for i in range(10):
    array[0, i] = 1
    array[1, i+10] = 1
  yield Mat.FromArray(array)</q1:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:Tile">
                <q4:RowTiles>2</q4:RowTiles>
                <q4:ColumnTiles>1</q4:ColumnTiles>
              </Combinator>
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Mat

@returns(Mat)
def process(value):
  return value.Reshape(0, 1)</q1:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:Tile">
                <q4:RowTiles>1</q4:RowTiles>
                <q4:ColumnTiles>10</q4:ColumnTiles>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:Buffer">
                <q4:Count>1</q4:Count>
                <q4:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileName</MemberName>
        <Name />
        <Value />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Left blue</Name>
        <Description>Left condition</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Accumulate" />
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Right orange</Name>
        <Description>Right Condition</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Accumulate" />
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>BehaviorData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Trial number, Trial type, Succes count, Time</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item2</Selector>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%i,%i,%i,</Pattern>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:SerialStringRead">
          <q3:PortName>COM4</q3:PortName>
          <q3:NewLine>\r\n</q3:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>HSCamCSV_fname</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_HSCam.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Data\Video\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(input):
#    Directory= value.Item1
#    FileName= value.Item2
#    FileNameSuf= value.Item3
    return input.Item1+input.Item2+input.Item3</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:VideoWriter">
          <q5:FileName>C:\Data\Video\ghasdfgh_Webcam.avi</q5:FileName>
          <q5:Suffix>Timestamp</q5:Suffix>
          <q5:Buffered>true</q5:Buffered>
          <q5:Overwrite>false</q5:Overwrite>
          <q5:FourCC>FMP4</q5:FourCC>
          <q5:FrameRate>30</q5:FrameRate>
          <q5:FrameSize>
            <q5:Width>0</q5:Width>
            <q5:Height>0</q5:Height>
          </q5:FrameSize>
          <q5:ResizeInterpolation>NearestNeighbor</q5:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:VideoWriter">
          <q5:FileName>C:\Data\Video\ghasdfgh_HSCam.avi</q5:FileName>
          <q5:Suffix>Timestamp</q5:Suffix>
          <q5:Buffered>true</q5:Buffered>
          <q5:Overwrite>false</q5:Overwrite>
          <q5:FourCC>FMP4</q5:FourCC>
          <q5:FrameRate>500</q5:FrameRate>
          <q5:FrameSize>
            <q5:Width>0</q5:Width>
            <q5:Height>0</q5:Height>
          </q5:FrameSize>
          <q5:ResizeInterpolation>NearestNeighbor</q5:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>C:\Data\Video\ghasdfgh_HSCam.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>Timestamp</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:Selector>Source.Timestamp</q3:Selector>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>BurnTimestampHSCam</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Skip">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

font = Font(2)

@returns(IplImage)
def process(value):
  data = value.Item1
  start = value.Item2
  elapsed = data.Timestamp - start
  output = data.Value.Clone()
  CV.PutText(output, elapsed.ToString("hh\:mm\:ss\.fff"), Point(0,30), font, Scalar.Rgb(255,0,255))
  return output</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ROIstuff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:RoiActivityDetected">
                <q5:Index xsi:nil="true" />
                <q5:Threshold>0</q5:Threshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:RoiActivity" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Laplace">
                <q5:ApertureSize>3</q5:ApertureSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Crop">
                <q5:RegionOfInterest>
                  <q5:X>94</q5:X>
                  <q5:Y>144</q5:Y>
                  <q5:Width>100</q5:Width>
                  <q5:Height>150</q5:Height>
                </q5:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:Concat">
                <q4:Axis>0</q4:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:RoiActivityDetected">
                <q5:Index xsi:nil="true" />
                <q5:Threshold>0</q5:Threshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:RoiActivity" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Laplace">
                <q5:ApertureSize>3</q5:ApertureSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Crop">
                <q5:RegionOfInterest>
                  <q5:X>308</q5:X>
                  <q5:Y>138</q5:Y>
                  <q5:Width>100</q5:Width>
                  <q5:Height>150</q5:Height>
                </q5:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Flip">
                <q5:Mode>Horizontal</q5:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Crop">
                <q5:RegionOfInterest>
                  <q5:X>206</q5:X>
                  <q5:Y>182</q5:Y>
                  <q5:Width>100</q5:Width>
                  <q5:Height>150</q5:Height>
                </q5:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>NoseDetector</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Source.Area</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>3</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>1</From>
                          <To>0</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>3</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:LargestBinaryRegion" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:BinaryRegionAnalysis" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:FindContours">
                      <q5:Mode>External</q5:Mode>
                      <q5:Method>ChainApproxNone</q5:Method>
                      <q5:Offset>
                        <q5:X>0</q5:X>
                        <q5:Y>0</q5:Y>
                      </q5:Offset>
                      <q5:MinArea>50</q5:MinArea>
                      <q5:MaxArea>500</q5:MaxArea>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:HsvThreshold">
                      <q5:Lower>
                        <q5:Val0>99</q5:Val0>
                        <q5:Val1>95</q5:Val1>
                        <q5:Val2>44</q5:Val2>
                        <q5:Val3>0</q5:Val3>
                      </q5:Lower>
                      <q5:Upper>
                        <q5:Val0>165</q5:Val0>
                        <q5:Val1>255</q5:Val1>
                        <q5:Val2>129</q5:Val2>
                        <q5:Val3>255</q5:Val3>
                      </q5:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:ConvertColor">
                      <q5:Conversion>Bgr2Hsv</q5:Conversion>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DistinctUntilChanged" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>8</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TriggeredWindow">
                <Count xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Flip">
                <q5:Mode>Vertical</q5:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>4</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>13</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>BurnTimestamp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

font = Font(2)

@returns(IplImage)
def process(value):
  data = value.Item1
  start = value.Item2
  elapsed = data.Timestamp - start
  output = data.Value.Clone()
  CV.PutText(output, elapsed.ToString("hh\:mm\:ss\.fff"), Point(0,30), font, Scalar.Rgb(255,255,0))
  return output</q1:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Skip">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:VideoCaptureDevice">
          <q6:Index>1</q6:Index>
          <q6:Format>
            <q6:FrameSize>
              <q6:Width>640</q6:Width>
              <q6:Height>480</q6:Height>
            </q6:FrameSize>
            <q6:AverageFrameRate>30</q6:AverageFrameRate>
            <q6:MaximumFrameRate>60</q6:MaximumFrameRate>
            <q6:BitCount>24</q6:BitCount>
          </q6:Format>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:CameraCapture">
          <q5:Index>1</q5:Index>
          <q5:CaptureProperties>
            <q5:CapturePropertyAssignment>
              <q5:Property>Fps</q5:Property>
              <q5:Value>500</q5:Value>
            </q5:CapturePropertyAssignment>
          </q5:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringVideoWriter">
        <MemberName>FileName</MemberName>
        <Name />
        <Value />
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringVideoWriter">
        <MemberName>FileName</MemberName>
        <Name />
        <Value />
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileName</MemberName>
        <Name />
        <Value />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:SerialStringWrite">
          <q3:PortName>COM4</q3:PortName>
          <q3:NewLine>\r\n</q3:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>ghasdfgh</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>ghasdfgh</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>WebCamAVI_fname</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_Webcam.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Data\Video\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(input):
#    Directory= value.Item1
#    FileName= value.Item2
#    FileNameSuf= value.Item3
    return input.Item1+input.Item2+input.Item3</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>ghasdfgh</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>ghasdfgh</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Behavior_fname</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Data\Behav\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(input):
#    Directory= value.Item1
#    FileName= value.Item2
#    FileNameSuf= value.Item3
    return input.Item1+input.Item2+input.Item3</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>HSCamAVI_fname</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_HSCam.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Data\Video\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="q1:PythonTransform">
              <q1:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(input):
#    Directory= value.Item1
#    FileName= value.Item2
#    FileNameSuf= value.Item3
    return input.Item1+input.Item2+input.Item3</q1:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>33</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>3</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>33</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>3</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>38</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>37</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>34</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>35</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>9</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>11</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>32</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>21</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>31</From>
        <To>22</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>23</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>34</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>35</From>
        <To>40</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>36</From>
        <To>30</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>37</From>
        <To>36</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>38</From>
        <To>39</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>39</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>40</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.WorkflowProperty`1[[System.Windows.Forms.Keys, System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.SerialStringWrite, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.SerialStringWrite, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonSource, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Tile, Bonsai.Dsp, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Buffer, Bonsai.Dsp, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.CsvWriter, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Merge, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ParseBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.SerialStringRead, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivityDetected, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivity, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Laplace, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Concat, Bonsai.Dsp, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Flip, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.HsvThreshold, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertColor, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TriggeredWindow, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Video.VideoCaptureDevice, Bonsai.Video, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>