<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\Data\Behav\head free platform\HSCam.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>1</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\Data\Behav\head free platform\webcam.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>