<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoCaptureDevice">
          <q1:Index>0</q1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>C:\Video\Cam1.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>false</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoCaptureDevice">
          <q1:Index>0</q1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>C:\Video\Cam3.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>false</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoCaptureDevice">
          <q1:Index>0</q1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>C:\Video\Cam4.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>false</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>C:\Video\Cam2.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>false</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoCaptureDevice">
          <q1:Index>0</q1:Index>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Video.VideoCaptureDevice, Bonsai.Video, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>