<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
          <p1:ToggleTrigger>false</p1:ToggleTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>38</cv:X>
            <cv:Y>310</cv:Y>
            <cv:Width>496</cv:Width>
            <cv:Height>443</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GpioPinState" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count xsi:nil="true" />
          <rx:TimeSpan>PT8S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>test\new_.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="8" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>