<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:p1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Experiment name</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="XP name" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test2cams</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\Data\test\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>DirFileName</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Video1FileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirFileName</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>avi filename</ipy:Name>
              <ipy:Description>avi filename</ipy:Description>
              <ipy:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCam1.avi"
  return path
</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ffmpeg call</ipy:Name>
        <ipy:Script>import os
pipename = r'\\.\pipe\video1'

@returns(bool)
def process(value):
  fname=value.Item2;
  os.system(str.format(r'ffmpeg -y -f rawvideo -pix_fmt gray -s 640x480 -i {0} -y -pix_fmt nv12 -vcodec h264_nvenc {1}',pipename,fname))
  return True</ipy:Script>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Video2FileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirFileName</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>avi filename</ipy:Name>
              <ipy:Description>avi filename</ipy:Description>
              <ipy:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCam2.avi"
  return path
</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ffmpeg call</ipy:Name>
        <ipy:Script>import os
pipename = r'\\.\pipe\video2'

@returns(bool)
def process(value):
  fname=value.Item2;
  os.system(str.format(r'ffmpeg -y -f rawvideo -pix_fmt gray -s 640x480 -i {0} -y -pix_fmt nv12 -vcodec h264_nvenc {1}',pipename,fname))
  return True</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>22789615</p1:SerialNumber>
          <p1:ParameterFile>C:\Basler\Config\acA640-750um_triggered500Hz_318rig.pfs</p1:ParameterFile>
          <p1:GrabStrategy>OneByOne</p1:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SkipUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\video1</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>22636055</p1:SerialNumber>
          <p1:ParameterFile>C:\Basler\Config\acA640-750um_triggered500Hz_318rig.pfs</p1:ParameterFile>
          <p1:GrabStrategy>OneByOne</p1:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SkipUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\video2</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Pause</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>VideoStart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>End</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>VideoEnd</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>