<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>D:\Data\tests\whisker\excerpt_video_whisker_overlay.mp4</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>D:\Data\tests\whisker\excerpt_video_updated_whisker_overlay.mp4</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>1</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\Data\tests\whisker\excerpt_video_whisker_overlay_combined.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>