<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties>
            <cv:CapturePropertyAssignment>
              <cv:Property>Fps</cv:Property>
              <cv:Value>500</cv:Value>
            </cv:CapturePropertyAssignment>
          </cv:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>BurnTimestampHSCam</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

font = Font(2)

@returns(IplImage)
def process(value):
  data = value.Item1
  start = value.Item2
  elapsed = data.Timestamp - start
  output = data.Value.Clone()
  CV.PutText(output, elapsed.ToString("hh\:mm\:ss\.fff"), Point(0,30), font, Scalar.Rgb(255,0,255))
  return output</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Data\Video\filename_HSCam.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>500</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Data\Video\filename_HSCam.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.Milliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowCount">
          <rx:Count>500</rx:Count>
          <rx:Skip>1</rx:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Average" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Int64Property">
          <Value>10000000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.Ticks</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Divide" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>589</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowCount">
          <rx:Count>500</rx:Count>
          <rx:Skip>1</rx:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Average" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="10" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>