<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>D:\Data\Wenxi\0.mp4</cv:FileName>
          <cv:PlaybackRate>500000</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>71</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivity">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>95</cv:X>
                <cv:Y>168</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>170</cv:X>
                <cv:Y>168</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>170</cv:X>
                <cv:Y>111</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>95</cv:X>
                <cv:Y>111</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:Operation>Sum</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivityDetected">
          <cv:Index>0</cv:Index>
          <cv:Threshold>50</cv:Threshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\Data\Wenxi\Wall_Movement_FrameIndex_Time.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Item1.Index</io:Selector>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>