<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

font = Font(2)

@returns(IplImage)
def process(value):
  data = value.Item1
  start = value.Item2
  elapsed = data.Timestamp - start
  output = data.Value.Clone()
  CV.PutText(output, elapsed.ToString("hh\:mm\:ss\.fff"), Point(0,30), font, Scalar.Rgb(255,255,0))
  return output</ipy:Script>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>