<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089" xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
          <Value>Down</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM8</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2HlsFull</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:HsvThreshold">
                <cv:Lower>
                  <cv:Val0>80</cv:Val0>
                  <cv:Val1>78</cv:Val1>
                  <cv:Val2>250</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>170</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>255</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>268</cv:X>
                  <cv:Y>132</cv:Y>
                  <cv:Width>48</cv:Width>
                  <cv:Height>46</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>100000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>testvideo3.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="0" To="7" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>