<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>Z:\VMSharedFolder %\Vincent\001p\001p_0308_HFtube_545_305_FirstWave_MStim_20180308-152248HSCam.avi</cv:FileName>
          <cv:PlaybackRate>500</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="rx:Defer">
        <Name>VideoProc</Name>
        <Description>VideoProc</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>222</cv:X>
                  <cv:Y>14</cv:Y>
                  <cv:Width>410</cv:Width>
                  <cv:Height>46</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>107</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>5000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:TakeWhile">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTrigger">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Z:\VMSharedFolder %\Vincent\001p\001p_0308_HFtube_545_305_FirstWave_MStim_FrameIndex.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="14" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>