<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>128</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivity">
          <cv:Operation>Sum</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>ActivityIndex</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Activity.Val0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Index</rx:KeySelector>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>DetectEntryToExit</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TimeInterval" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2 as RoiIndex,
Item1.Value as RoiState,
Item1.Interval.TotalSeconds as SecondsSinceLastState)</scr:Expression>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>EntryToExitOnly</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RoiState</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>roiState.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>