<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>4</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:PlaybackRate>0</cv:PlaybackRate>
            <cv:StartPosition>0</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>false</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>18</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivity">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>220</cv:X>
                <cv:Y>32</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>110</cv:X>
                <cv:Y>32</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>110</cv:X>
                <cv:Y>152</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>220</cv:X>
                <cv:Y>152</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>512</cv:X>
                <cv:Y>148</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>382</cv:X>
                <cv:Y>148</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>382</cv:X>
                <cv:Y>282</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>512</cv:X>
                <cv:Y>282</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>70</cv:X>
                <cv:Y>438</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>238</cv:X>
                <cv:Y>438</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>238</cv:X>
                <cv:Y>304</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>70</cv:X>
                <cv:Y>304</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:Operation>Sum</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as Activity,
Item2 as FrameIndex)</scr:Expression>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>ActivityIndex</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Activity</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Activity.Val0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameIndex</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1 as FrameIndex,
Item2.Value as Activity,
Item2.Index as RoiIndex)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>RoiIndex</rx:KeySelector>
        <rx:ElementSelector />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>DetectEntryToExit</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Activity</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameIndex</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1 as RoiState,
Item2 as FrameIndex)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:DistinctUntilChangedBy">
              <rx:KeySelector>RoiState</rx:KeySelector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2 as RoiIndex,
Item1.RoiState as RoiState,
Item1.FrameIndex as FrameIndex)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1.RoiIndex as RoiIndex,
Item1.RoiState as RoiState,
Item1.FrameIndex - Item2.FrameIndex as FramesSinceLastState)</scr:Expression>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>EntryToExitOnly</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RoiState</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="12" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>D:\Code\BonsaiWorkFlows\VideoOp\roiState.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>