<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrackingPipeline</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT5M</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2M</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>test.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>test.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>