<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F1</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT10S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\Users\neurogears\Desktop\test.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>