<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>128</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>100</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(str)
def process(value):
  return ' '.join(str(o.Centroid) for o in value)</ipy:Script>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>objects.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>