<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>640</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Scan">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth xsi:nil="true" />
                <dsp:Scale>0.3</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Accumulation</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth xsi:nil="true" />
                <dsp:Scale>0.8</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:AffineTransform">
                <cv:Pivot>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Pivot>
                <cv:Translation>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Translation>
                <cv:Rotation>0</cv:Rotation>
                <cv:Scale>
                  <cv:X>1.1</cv:X>
                  <cv:Y>1.1</cv:Y>
                </cv:Scale>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Transform" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:WarpAffine">
                <cv:Transform>1.1,0,0;0,1.1,0</cv:Transform>
                <cv:Flags>Linear</cv:Flags>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>