WorkflowBuilder(Version=2.2.1)
Bonsai.Vision.FileCapture(FileName=E:\Data\Video\VidExports\PrV75_115_Handheld_HSCamClips0.avi, PlaybackRate=50, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true)
-> Bonsai.Vision.Grayscale => #1
-> Skip(Count=1) => #4
#4, #1 -> Zip
-> Subtract
-> Bonsai.Vision.Threshold(ThresholdValue=20, MaxValue=255, ThresholdType=Binary)
-> NestedWorkflow ROIs
    WorkflowInput Source1 => #15
    -> Bonsai.Vision.RoiActivity => #14
      Regions
        ArrayOfPoint(Point(X=1, Y=1), Point(X=50, Y=1), Point(X=50, Y=10), Point(X=1, Y=10))
        ArrayOfPoint(Point(X=1, Y=11), Point(X=50, Y=11), Point(X=50, Y=20), Point(X=1, Y=20))
        ArrayOfPoint(Point(X=1, Y=21), Point(X=50, Y=21), Point(X=50, Y=30), Point(X=1, Y=30))
        ArrayOfPoint(Point(X=1, Y=31), Point(X=50, Y=31), Point(X=50, Y=40), Point(X=1, Y=40))
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    -> NestedWorkflow => #1
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=0, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=2, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=3, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=4, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=5, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=6, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=7, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=8, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=9, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=10, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=11, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=12, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=13, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=14, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=15, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=16, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=17, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=18, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=19, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #14 -> NestedWorkflow => #2
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=20, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=21, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=22, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=23, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=24, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=25, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=26, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=27, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=28, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=29, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=30, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=31, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=32, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=33, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=34, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=35, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=36, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=37, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=38, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=39, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #14 -> NestedWorkflow => #3
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=40, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=41, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=42, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=43, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=44, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=45, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=46, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=47, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=48, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=49, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=50, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=51, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=52, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=53, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=54, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=55, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=56, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=57, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=58, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=59, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #14 -> NestedWorkflow => #4
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=60, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=61, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=62, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=63, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=64, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=65, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=66, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=67, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=68, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=69, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=70, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=71, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=72, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=73, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=74, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=75, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=76, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=77, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=78, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=79, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #14 -> NestedWorkflow => #5
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=80, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=81, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=82, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=83, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=84, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=85, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=86, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=87, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=88, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=89, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=90, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=91, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=92, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=93, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=94, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=95, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=96, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=97, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=98, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=99, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #14 -> NestedWorkflow => #6
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=100, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=101, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=102, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=103, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=104, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=105, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=106, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=107, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=108, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=109, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=110, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=111, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=112, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=113, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=114, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=115, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=116, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=117, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=118, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=119, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #14 -> NestedWorkflow => #7
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=120, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=121, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=122, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=123, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=124, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=125, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=126, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=127, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=128, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=129, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=130, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=131, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=132, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=133, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=134, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=135, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=136, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=137, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=138, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=139, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #5, #1, #2, #3, #4, #6, #7 -> Zip => #0
    #15 -> Bonsai.Vision.RoiActivity => #17
      Regions
        ArrayOfPoint(Point(X=1, Y=1), Point(X=50, Y=1), Point(X=50, Y=10), Point(X=1, Y=10))
        ArrayOfPoint(Point(X=1, Y=11), Point(X=50, Y=11), Point(X=50, Y=20), Point(X=1, Y=20))
        ArrayOfPoint(Point(X=1, Y=21), Point(X=50, Y=21), Point(X=50, Y=30), Point(X=1, Y=30))
        ArrayOfPoint(Point(X=1, Y=31), Point(X=50, Y=31), Point(X=50, Y=40), Point(X=1, Y=40))
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    -> NestedWorkflow => #8
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=240, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=241, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=242, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=243, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=244, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=245, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=246, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=247, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=248, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=249, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=250, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=251, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=252, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=253, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=254, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=255, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=256, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=257, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=258, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=259, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #17 -> NestedWorkflow => #9
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=180, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=181, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=182, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=183, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=184, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=185, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=186, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=187, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=188, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=189, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=190, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=191, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=192, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=193, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=194, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=195, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=196, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=197, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=198, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=199, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #17 -> NestedWorkflow => #10
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=160, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=161, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=162, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=163, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=164, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=165, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=166, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=167, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=168, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=169, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=170, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=171, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=172, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=173, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=174, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=175, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=176, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=177, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=178, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=179, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #17 -> NestedWorkflow => #11
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=220, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=221, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=222, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=223, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=224, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=225, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=226, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=227, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=228, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=229, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=230, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=231, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=232, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=233, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=234, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=235, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=236, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=237, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=238, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=239, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #17 -> NestedWorkflow => #12
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=200, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=201, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=202, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=203, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=204, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=205, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=206, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=207, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=208, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=209, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=210, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=211, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=212, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=213, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=214, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=215, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=216, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=217, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=218, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=219, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #17 -> NestedWorkflow => #13
        WorkflowInput Source1 => #21
        -> Bonsai.Vision.RoiActivityDetected(Index=140, Threshold=150) => #1
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=141, Threshold=150) => #2
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=142, Threshold=150) => #3
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=143, Threshold=150) => #4
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=144, Threshold=150) => #5
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=145, Threshold=150) => #6
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=146, Threshold=150) => #7
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=147, Threshold=150) => #8
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=148, Threshold=150) => #9
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=149, Threshold=150) => #10
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=150, Threshold=150) => #11
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=151, Threshold=150) => #12
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=152, Threshold=150) => #13
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=153, Threshold=150) => #14
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=154, Threshold=150) => #15
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=155, Threshold=150) => #16
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=156, Threshold=150) => #17
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=157, Threshold=150) => #18
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=158, Threshold=150) => #19
        #21 -> Bonsai.Vision.RoiActivityDetected(Index=159, Threshold=150) => #20
        #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #18, #19, #20 -> Zip
        -> WorkflowOutput
    #8, #9, #10, #11, #12, #13 -> Zip => #18
    #0, #18 -> Zip
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter
  FileName=E:\Data\Video\VidExports\PrV75_115_Handheld_HSCamClips0_ROIWhiskerContact.csv
  Append=false
  Overwrite=false
  Suffix=FileCount
  IncludeHeader=false
  Selector: Source.Item1.Item2,Source.Item1.Item3,Source.Item1.Item4,Source.Item1.Item5,Source.Item1.Item1,Source.Item1.Item6,Source.Item1.Item7,Source.Item2.Item6,Source.Item2.Item3,Source.Item2.Item2,Source.Item2.Item5,Source.Item2.Item4,Source.Item2.Item1
