<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:q1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Experiment name</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\IOS\Manuel\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="XP name" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>sourisbidule\run3\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>DirFileName</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:PylonCapture">
          <q1:SerialNumber>23106925</q1:SerialNumber>
          <q1:ParameterFile>C:\Code\WideField\BaslerConfig\WideFieldCam.pfs</q1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Save Wide Field Frames</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ImageFileName</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DirFileName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Name>filename</scr:Name>
                    <scr:Description>image dir and  filename</scr:Description>
                    <scr:Script>import clr
#from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  #timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
  path = value.Item1.Item1 + value.Item1.Item2 + "\\" + str(value.Item2) + "\\WideField\\" + ".tiff"
  return path
</scr:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialTrigger</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:SaveImage">
                <cv:FileName>D:\IOS\Manuel\sourisbidule\run2\\10\WideField\.tiff</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Frame count</Name>
        <Description>trigger every 50 frames</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>GrabResult.ImageNumber</Selector>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>50</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TrialTrigger</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:PylonCapture">
          <q1:SerialNumber>40030319</q1:SerialNumber>
          <q1:ParameterFile>C:\Code\WideField\BaslerConfig\BehaviorCam.pfs</q1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Save Behavior Frames</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ImageFileName</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DirFileName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Name>filename</scr:Name>
                    <scr:Description>image dir and  filename</scr:Description>
                    <scr:Script>import clr
#from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  #timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
  path = value.Item1.Item1 + value.Item1.Item2 + "\\" + str(value.Item2) + "\\Behavior\\" + ".tiff"
  return path
</scr:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialTrigger</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:SaveImage">
                <cv:FileName>D:\IOS\Manuel\sourisbidule\run2\\10\Behavior\.tiff</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>IncrementTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialTrigger</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TrialNumber</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>