<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT0S</rx:DueTime>
            <rx:Period>PT0S</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>true</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalOutput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>8</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT3S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BitwiseNot" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalOutput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>8</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT52.5S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:RepeatCount">
            <rx:Count>30</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT0S</rx:DueTime>
            <rx:Period>PT0S</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>true</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalOutput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>12</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT3S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BitwiseNot" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalOutput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>12</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT52.5S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:RepeatCount">
            <rx:Count>30</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>4</vid:Index>
          <vid:Format>
            <vid:FrameSize>
              <vid:Width>1280</vid:Width>
              <vid:Height>720</vid:Height>
            </vid:FrameSize>
            <vid:AverageFrameRate>30</vid:AverageFrameRate>
            <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
            <vid:BitCount>24</vid:BitCount>
          </vid:Format>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Practicetime.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp,Value.ImageData</io:Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Value.Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>output scratch\junk.avi</cv:FileName>
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>true</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>30</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BackgroundSubtraction">
            <cv:BackgroundFrames>200</cv:BackgroundFrames>
            <cv:AdaptationRate>0</cv:AdaptationRate>
            <cv:ThresholdValue>30</cv:ThresholdValue>
            <cv:ThresholdType>Binary</cv:ThresholdType>
            <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>External</cv:Mode>
            <cv:Method>ChainApproxNone</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea>15</cv:MinArea>
            <cv:MaxArea xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:LargestBinaryRegion" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Condition">
          <Name>ObjectDetected</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Area</Selector>
              </Expression>
              <Expression xsi:type="GreaterThan">
                <Operand xsi:type="DoubleProperty">
                  <Value>20</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>output scratch\junk.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>true</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Centroid</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.ImageData</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="28" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="27" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>