<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>teensy</ard:Name>
          <ard:PortName>COM12</ard:PortName>
          <ard:BaudRate>115200</ard:BaudRate>
          <ard:SamplingInterval>2</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>teensy</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>treadmill</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>teensy</ard:PortName>
          <ard:Pin>1</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Final valve</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>teensy</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>check digital pin</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>trigger</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>40266951</p1:SerialNumber>
          <p1:ParameterFile>acA1440-220um_40266951.pfs</p1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>video</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>GrabResult.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>video time stamps</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trigger</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>BaselineRecording</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="Delay" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT10S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ExtendedRecording</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>treadmill</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>2500</dsp:Count>
                <dsp:Skip>1</dsp:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Sum</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Sum" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="IntProperty">
                      <Value>2500</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StimulusOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>teensy</ard:PortName>
                <ard:Pin>2</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>FixedRecordingPeriod</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="Delay" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT25S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>stop</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StimulusOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>teensy</ard:PortName>
                <ard:Pin>2</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Final valve</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Test\finalV.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trigger</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>stop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>Test\vid.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>120</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>video time stamps</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Test\timestamps.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trigger</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>stop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>treadmill</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Test\treadmill.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trigger</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>stop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="13" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="29" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="35" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="44" Label="Source1" />
      <Edge From="43" To="44" Label="Source2" />
      <Edge From="44" To="46" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>