<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:p1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon" xmlns:sys="clr-namespace:System;assembly=mscorlib" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>KB controls</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F12</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>VideoStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>End</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>VideoEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F8</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TouchStimStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F9</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TouchStimStop</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>8</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>8</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>22789615</p1:SerialNumber>
          <p1:ParameterFile>C:\Code\BonsaiWorkFlows\Video\VideoSettings\acA640-750um_trig500Hz_400usExp_f8_335rig.pfs</p1:ParameterFile>
          <p1:GrabStrategy>OneByOne</p1:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Touch stim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT5S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TouchStimStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TouchStimStop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>2</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>2</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>