<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns:q3="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT1S</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Name experiment</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="XP name" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>testnewcmd</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\Data\Video\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="q1:PythonTransform">
        <q1:Name>avi filename</q1:Name>
        <q1:Description>avi filename</q1:Description>
        <q1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "HSCam.avi"
  return path
</q1:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q1:PythonTransform">
        <q1:Name>ffmpeg call</q1:Name>
        <q1:Script>import os

#fname = 'D:\\Data\\Video\\testvideo.avi'
pipename = r'\\.\pipe\video'

@returns(bool)
def process(value):
  fname=value.Item2;
  os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 640x480  -pix_fmt rgb24 -i {0} -c:v h264_nvenc -preset fast {1}',pipename,fname))
# option: 
# force input frame rate (don't force output): -r 500
# pixel format (output) -pix_fmt nv12
# target bitrate : -b:v 20M (only some values work)
# visual quality (encoding vs compression efficiency): -preset [fast/slow ...]

  return True</q1:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoCaptureDevice">
          <q2:Index>0</q2:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:ImageWriter">
          <q3:Path>\\.\pipe\video</q3:Path>
          <q3:Suffix>None</q3:Suffix>
          <q3:Overwrite>false</q3:Overwrite>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Video.VideoCaptureDevice, Bonsai.Video, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>