<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.1.2">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:q7="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns:q4="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q6="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:q1="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="q1:SerialStringRead">
          <q1:PortName>COM4</q1:PortName>
        </Generator>
      </Expression>
      <Expression xsi:type="q1:CsvWriter">
        <q1:PropertyMappings />
        <q1:FileName>C:\Data\Behav\PrV56_Tex10_.csv</q1:FileName>
        <q1:Append>false</q1:Append>
        <q1:Overwrite>false</q1:Overwrite>
        <q1:Suffix>Timestamp</q1:Suffix>
        <q1:IncludeHeader>false</q1:IncludeHeader>
        <q1:Selector>Source.Value,Source.Timestamp.DateTime</q1:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <PropertyMappings />
              <Combinator xsi:type="q2:VideoWriter">
                <q2:FileName>C:\Bonsai\video\NoseDetected.avi</q2:FileName>
                <q2:Suffix>FileCount</q2:Suffix>
                <q2:Buffered>true</q2:Buffered>
                <q2:Overwrite>false</q2:Overwrite>
                <q2:FourCC>FMP4</q2:FourCC>
                <q2:FrameRate>30</q2:FrameRate>
                <q2:FrameSize>
                  <q2:Width>30</q2:Width>
                  <q2:Height>30</q2:Height>
                </q2:FrameSize>
                <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
        <PropertyMappings />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:RoiActivityDetected">
          <q2:Index xsi:nil="true" />
          <q2:Threshold>0</q2:Threshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowPropertyOfKeys">
          <Value>S</Value>
        </Operand>
        <PropertyMappings />
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="StringProperty">
          <Value>&lt;1</Value>
        </Generator>
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="q3:KeyDown">
          <q3:Filter>S</q3:Filter>
        </Generator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0.5</Value>
        </Operand>
        <PropertyMappings />
      </Expression>
      <Expression xsi:type="q4:PythonTransform">
        <q4:Script>from System import Random
generator = Random()

@returns(float)
def process(value):
  return generator.NextDouble()</q4:Script>
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="StringProperty">
          <Value>0</Value>
        </Generator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>NoseDetector</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Operand>
                    <PropertyMappings />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Area</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <PropertyMappings />
                    <Combinator xsi:type="SkipUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <PropertyMappings />
                    <Combinator xsi:type="ElementCountWindow">
                      <Count>10</Count>
                      <Skip>0</Skip>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <PropertyMappings />
                          <Combinator xsi:type="Average" />
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>2</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>1</From>
                          <To>0</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                    <PropertyMappings />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <PropertyMappings />
                    <Combinator xsi:type="Delay">
                      <DueTime>PT1S</DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Operand>
                    <PropertyMappings />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>8</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>4</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
              <PropertyMappings />
            </Expression>
            <Expression xsi:type="Combinator">
              <PropertyMappings />
              <Combinator xsi:type="q2:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <PropertyMappings />
              <Combinator xsi:type="q2:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <PropertyMappings />
              <Combinator xsi:type="q2:FindContours">
                <q2:Mode>External</q2:Mode>
                <q2:Method>ChainApproxNone</q2:Method>
                <q2:Offset>
                  <q2:X>0</q2:X>
                  <q2:Y>0</q2:Y>
                </q2:Offset>
                <q2:MinArea>50</q2:MinArea>
                <q2:MaxArea>500</q2:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <PropertyMappings />
              <Combinator xsi:type="q2:HsvThreshold">
                <q2:Lower>
                  <q2:Val0>99</q2:Val0>
                  <q2:Val1>95</q2:Val1>
                  <q2:Val2>44</q2:Val2>
                  <q2:Val3>0</q2:Val3>
                </q2:Lower>
                <q2:Upper>
                  <q2:Val0>165</q2:Val0>
                  <q2:Val1>255</q2:Val1>
                  <q2:Val2>129</q2:Val2>
                  <q2:Val3>255</q2:Val3>
                </q2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <PropertyMappings />
              <Combinator xsi:type="q2:ConvertColor">
                <q2:Conversion>Bgr2Hsv</q2:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <PropertyMappings />
              <Combinator xsi:type="DistinctUntilChanged" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
        <PropertyMappings />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:SerialStringWrite">
          <q1:PortName>COM4</q1:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:SerialStringWrite">
          <q1:PortName>COM4</q1:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="q3:KeyDown">
          <q3:Filter>End</q3:Filter>
        </Generator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:RoiActivityDetected">
          <q2:Index xsi:nil="true" />
          <q2:Threshold>0</q2:Threshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="StringProperty">
          <Value>&lt;0</Value>
        </Generator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:RoiActivity" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:RoiActivity" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:Laplace">
          <q2:ApertureSize>3</q2:ApertureSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:Laplace">
          <q2:ApertureSize>3</q2:ApertureSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:Crop">
          <q2:RegionOfInterest>
            <q2:X>320</q2:X>
            <q2:Y>240</q2:Y>
            <q2:Width>38</q2:Width>
            <q2:Height>32</q2:Height>
          </q2:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:Crop">
          <q2:RegionOfInterest>
            <q2:X>434</q2:X>
            <q2:Y>94</q2:Y>
            <q2:Width>98</q2:Width>
            <q2:Height>146</q2:Height>
          </q2:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:Crop">
          <q2:RegionOfInterest>
            <q2:X>172</q2:X>
            <q2:Y>16</q2:Y>
            <q2:Width>156</q2:Width>
            <q2:Height>96</q2:Height>
          </q2:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q2:Flip">
          <q2:Mode>Vertical</q2:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="q5:VideoCaptureDevice">
          <q5:Index>0</q5:Index>
        </Generator>
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="StringProperty">
          <Value>&gt;</Value>
        </Generator>
      </Expression>
      <Expression xsi:type="q4:ExpressionTransform">
        <q4:Expression>it ? 1 : 0</q4:Expression>
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="StringProperty">
          <Value>1</Value>
        </Generator>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowPropertyOfKeys">
          <Value>End</Value>
        </Operand>
        <PropertyMappings />
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="StringProperty">
          <Value>&gt;</Value>
        </Generator>
      </Expression>
      <Expression xsi:type="q4:ExpressionTransform">
        <q4:Expression>it ? 1 : 0</q4:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="TriggeredWindow" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>29</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>34</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>34</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>8</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>8</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>15</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>31</From>
        <To>33</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>15</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>15</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>34</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.IO.SerialStringRead, Bonsai.System, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivityDetected, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.WorkflowProperty`1[[System.Windows.Forms.Keys, System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SkipUntil, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.ElementCountWindow, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Average, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.HsvThreshold, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertColor, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.SerialStringWrite, Bonsai.System, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.RoiActivity, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Laplace, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Flip, Bonsai.Vision, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Video.VideoCaptureDevice, Bonsai.Video, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TriggeredWindow, Bonsai.Core, Version=2.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>