<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.2" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython" xmlns:p1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions" xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:sys="clr-namespace:System;assembly=mscorlib" xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>KB controls</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F12</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>VideoStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>End</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>VideoEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F8</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TouchStimStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F9</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TouchStimStop</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>8</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>8</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Experiment name</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="XP name" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>vIRt51_1204_5185</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\Data\vIRt51\vIRt51_1204\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DirFileName</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HighSpeed Video</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VideoFileName</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DirFileName</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>avi filename</ipy:Name>
                    <ipy:Description>avi filename</ipy:Description>
                    <ipy:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCam.avi"
  return path
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>ffmpeg call</ipy:Name>
              <ipy:Script>import os

#fname = 'D:\\Data\\Video\\video.avi'
pipename = r'\\.\pipe\video'

@returns(bool)
def process(value):
  fname=value.Item2;
  #os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 640x480 -pix_fmt rgb24 -i {0} -c:v h264_nvenc -preset fast -b:v 4M {1}',pipename,fname))
  # -r 500 -preset fast  -b:v 2M
  os.system(str.format(r'ffmpeg -y -f rawvideo -pix_fmt gray -s 640x480 -i {0} -y -pix_fmt nv12 -vcodec h264_nvenc {1}',pipename,fname))
  return True</ipy:Script>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:PylonCapture">
                <p1:SerialNumber>22789615</p1:SerialNumber>
                <p1:ParameterFile>C:\Code\BonsaiWorkFlows\Video\VideoSettings\acA640-750um_trig500Hz_400usExp_f8_335rig.pfs</p1:ParameterFile>
                <p1:GrabStrategy>OneByOne</p1:GrabStrategy>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ImageWriter">
                <cv:Path>\\.\pipe\video</cv:Path>
                <cv:Suffix>None</cv:Suffix>
                <cv:Overwrite>false</cv:Overwrite>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MemberSelector">
              <Selector>GrabResult.Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1 as RelativeSoftwareFrameTime,
Item2 as AbsoluteSoftwareFrameTime,
Item3 as RelativeCameraFrameTime
)</scr:Expression>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VideoCSVFileName</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DirFileName</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>csv filename</ipy:Name>
                    <ipy:Description>csv filename</ipy:Description>
                    <ipy:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCamFrameTime.csv"
  return path
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\vIRt51\vIRt51_1204\vIRt51_1204_5185_20201204-200119_HSCamFrameTime.csv</io:FileName>
              <io:Delimiter>,</io:Delimiter>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>RelativeSoftwareFrameTime,AbsoluteSoftwareFrameTime,RelativeCameraFrameTime</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="21" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="26" Label="Source1" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="24" Label="Source1" />
            <Edge From="20" To="30" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="30" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source3" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Touch stim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT5S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TouchStimStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TouchStimStop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>2</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM4</ard:PortName>
                <ard:Pin>2</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>