<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Experiment name</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="XP name" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>demo</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\test\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DirFileName</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HighSpeed Video</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="pylon:PylonCapture">
                <pylon:SerialNumber>22789615</pylon:SerialNumber>
                <pylon:ParameterFile>C:\Code\BonsaiWorkFlows\Video\VideoSettings\acA640-750um_trig500Hz_400usExp_4151rig.pfs</pylon:ParameterFile>
                <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Timestamps</Name>
              <Description>Saves soft timestamps to CSV file</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeOfDay.TotalMilliseconds</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Start_TS</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>GrabResult.Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1 as RelativeSoftwareFrameTime,
Item2 as AbsoluteSoftwareFrameTime,
Item3 as RelativeCameraFrameTime
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>VideoCSVFileName</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DirFileName</Name>
                        </Expression>
                        <Expression xsi:type="p1:PythonTransform">
                          <p1:Name>csv filename</p1:Name>
                          <p1:Description>csv filename</p1:Description>
                          <p1:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
#  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
#  path = value.Item2 + value.Item1 + "_" + timestamp + "_" + "HSCamFrameTime.csv"
  path = value.Item2 + value.Item1 + "_TopCam.csv"
  return path
</p1:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>D:\test\demo_2s_TopCam.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector>RelativeSoftwareFrameTime,AbsoluteSoftwareFrameTime,RelativeCameraFrameTime</io:Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                  <Edge From="3" To="15" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="15" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source3" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="19" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Video</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:ImageWriter">
                      <cv:Path>\\.\pipe\video</cv:Path>
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Overwrite>false</cv:Overwrite>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Arguments</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DirFileName</Name>
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Name>arguments</ipy:Name>
                          <ipy:Script>import clr

def process(value):
  path = value.Item2 + value.Item1 + "_TopCam.mp4"

# For acA640-750
  args = "-y -f rawvideo -s 640x480 -pix_fmt gray -i \\\\.\\pipe\\video -y -pix_fmt nv12 -vcodec h264_nvenc " + path

# For acA720-520
#  args = "-y -f rawvideo -s 720x540 -pix_fmt gray -i \\\\.\\pipe\\video -y -pix_fmt nv12 -vcodec h264_nvenc " + path

  return args</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Arguments" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:StartProcess">
                      <io:FileName>ffmpeg</io:FileName>
                      <io:Arguments>-y -f rawvideo -s 640x480 -pix_fmt gray -i \\.\pipe\video -y -pix_fmt nv12 -vcodec h264_nvenc D:\test\demo_2s_TopCam.mp4</io:Arguments>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:DelaySubscription">
                        <rx:DueTime>PT5S</rx:DueTime>
                      </Combinator>
                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Video_ArduCtl_TS</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>F12</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>VideoStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>End</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>VideoEnd</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ard:DigitalOutput">
                      <ard:PortName>COM4</ard:PortName>
                      <ard:Pin>8</ard:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoEnd</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ard:DigitalOutput">
                      <ard:PortName>COM4</ard:PortName>
                      <ard:Pin>8</ard:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoStart</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ard:DigitalOutput">
                      <ard:PortName>COM4</ard:PortName>
                      <ard:Pin>6</ard:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.01S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ard:DigitalOutput">
                      <ard:PortName>COM4</ard:PortName>
                      <ard:Pin>6</ard:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Start_TS</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoEnd</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ard:DigitalOutput">
                      <ard:PortName>COM4</ard:PortName>
                      <ard:Pin>6</ard:Pin>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.01S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ard:DigitalOutput">
                      <ard:PortName>COM4</ard:PortName>
                      <ard:Pin>6</ard:Pin>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="16" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>