<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="ExternalizedPropertyOfStringStringProperty">
        <MemberName>Value</MemberName>
        <Name>XP name</Name>
        <Value>SpVi16_0213_WR</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ImageWriter">
          <q1:Path>\\.\pipe\video</q1:Path>
          <q1:Suffix>None</q1:Suffix>
          <q1:Overwrite>false</q1:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="q2:PythonTransform">
        <q2:Name>ffmpeg call</q2:Name>
        <q2:Script>import os

#fname = 'D:\\Data\\Video\\video.avi'
pipename = r'\\.\pipe\video'

@returns(bool)
def process(value):
  fname=value.Item2;
  os.system(str.format(r'C:\\Users\\Vincent\\Downloads\\ffmpeg-3.4.1-win64-static\\bin\\ffmpeg -y -f rawvideo -s 640x480 -pix_fmt rgb24 -i {0} -c:v h264_qsv -preset veryfast {1}',pipename,fname))
  return True</q2:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CameraCapture">
          <q1:Index>0</q1:Index>
          <q1:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT1S</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringStringProperty">
        <MemberName>Value</MemberName>
        <Name>Directory</Name>
        <Value>C:\Data\Video\</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>SpVi16_0213_WR</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Data\Video\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="q2:PythonTransform">
        <q2:Name>avi filename</q2:Name>
        <q2:Description>avi filename</q2:Description>
        <q2:Script>import clr
#clr.AddReference("Bonsai.System")
#from System.IO import Path
#from Bonsai.IO import PathHelper, PathSuffix
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  timestamp = datetime.now().strftime("%Y%m%d-%H%M%S")
#  path = Path.Combine(Path.GetDirectoryName(value.Item1), Path.GetFileNameWithoutExtension(value.Item2)) + timestamp + ".csv"
  path = value.Item2 + value.Item1 + "_" + timestamp + "HSCam.mp4"
  return path
</q2:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>11</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>1</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>